PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=6CF61681
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stim/check_mark.png', 'stim/prompt.png', 'stim/rgb_mask.jpg', 'stim/wrong.png', 'stim/scrambled/prac_image.png', 'stim/scrambled/train/train(1).png', 'stim/scrambled/train/train(2).png', 'stim/scrambled/train/train(3).png', 'stim/scrambled/train/train(4).png', 'stim/scrambled/train/train(5).png', 'stim/scrambled/train/train(6).png', 'stim/scrambled/train/train(7).png', 'stim/scrambled/train/train(8).png', 'stim/scrambled/train/train(9).png', 'stim/scrambled/train/train(10).png', 'stim/scrambled/snail/snail(1).png', 'stim/scrambled/snail/snail(2).png', 'stim/scrambled/snail/snail(3).png', 'stim/scrambled/snail/snail(4).png', 'stim/scrambled/snail/snail(5).png', 'stim/scrambled/snail/snail(6).png', 'stim/scrambled/snail/snail(7).png', 'stim/scrambled/snail/snail(8).png', 'stim/scrambled/snail/snail(9).png', 'stim/scrambled/snail/snail(10).png', 'stim/scrambled/pineapple/pineapple(1).png', 'stim/scrambled/pineapple/pineapple(2).png', 'stim/scrambled/pineapple/pineapple(3).png', 'stim/scrambled/pineapple/pineapple(4).png', 'stim/scrambled/pineapple/pineapple(5).png', 'stim/scrambled/pineapple/pineapple(6).png', 'stim/scrambled/pineapple/pineapple(7).png', 'stim/scrambled/pineapple/pineapple(8).png', 'stim/scrambled/pineapple/pineapple(9).png', 'stim/scrambled/pineapple/pineapple(10).png', 'stim/scrambled/mushroom/mushroom(1).png', 'stim/scrambled/mushroom/mushroom(2).png', 'stim/scrambled/mushroom/mushroom(3).png', 'stim/scrambled/mushroom/mushroom(4).png', 'stim/scrambled/mushroom/mushroom(5).png', 'stim/scrambled/mushroom/mushroom(6).png', 'stim/scrambled/mushroom/mushroom(7).png', 'stim/scrambled/mushroom/mushroom(8).png', 'stim/scrambled/mushroom/mushroom(9).png', 'stim/scrambled/mushroom/mushroom(10).png', 'stim/scrambled/lawnmower/lawnmower(1).png', 'stim/scrambled/lawnmower/lawnmower(2).png', 'stim/scrambled/lawnmower/lawnmower(3).png', 'stim/scrambled/lawnmower/lawnmower(4).png', 'stim/scrambled/lawnmower/lawnmower(5).png', 'stim/scrambled/lawnmower/lawnmower(6).png', 'stim/scrambled/lawnmower/lawnmower(7).png', 'stim/scrambled/lawnmower/lawnmower(8).png', 'stim/scrambled/lawnmower/lawnmower(9).png', 'stim/scrambled/lawnmower/lawnmower(10).png', 'stim/scrambled/house/house(1).png', 'stim/scrambled/house/house(2).png', 'stim/scrambled/house/house(3).png', 'stim/scrambled/house/house(4).png', 'stim/scrambled/house/house(5).png', 'stim/scrambled/house/house(6).png', 'stim/scrambled/house/house(7).png', 'stim/scrambled/house/house(8).png', 'stim/scrambled/house/house(9).png', 'stim/scrambled/house/house(10).png', 'stim/scrambled/dog/dog(1).png', 'stim/scrambled/dog/dog(2).png', 'stim/scrambled/dog/dog(3).png', 'stim/scrambled/dog/dog(4).png', 'stim/scrambled/dog/dog(5).png', 'stim/scrambled/dog/dog(6).png', 'stim/scrambled/dog/dog(7).png', 'stim/scrambled/dog/dog(8).png', 'stim/scrambled/dog/dog(9).png', 'stim/scrambled/dog/dog(10).png', 'stim/scrambled/cow/cow(1).png', 'stim/scrambled/cow/cow(2).png', 'stim/scrambled/cow/cow(3).png', 'stim/scrambled/cow/cow(4).png', 'stim/scrambled/cow/cow(5).png', 'stim/scrambled/cow/cow(6).png', 'stim/scrambled/cow/cow(7).png', 'stim/scrambled/cow/cow(8).png', 'stim/scrambled/cow/cow(9).png', 'stim/scrambled/cow/cow(10).png', 'stim/scrambled/corn/corn(1).png', 'stim/scrambled/corn/corn(2).png', 'stim/scrambled/corn/corn(3).png', 'stim/scrambled/corn/corn(4).png', 'stim/scrambled/corn/corn(5).png', 'stim/scrambled/corn/corn(6).png', 'stim/scrambled/corn/corn(7).png', 'stim/scrambled/corn/corn(8).png', 'stim/scrambled/corn/corn(9).png', 'stim/scrambled/corn/corn(10).png', 'stim/scrambled/cat/cat(1).png', 'stim/scrambled/cat/cat(2).png', 'stim/scrambled/cat/cat(3).png', 'stim/scrambled/cat/cat(4).png', 'stim/scrambled/cat/cat(5).png', 'stim/scrambled/cat/cat(6).png', 'stim/scrambled/cat/cat(7).png', 'stim/scrambled/cat/cat(8).png', 'stim/scrambled/cat/cat(9).png', 'stim/scrambled/cat/cat(10).png', 'stim/scrambled/car/car(1).png', 'stim/scrambled/car/car(2).png', 'stim/scrambled/car/car(3).png', 'stim/scrambled/car/car(4).png', 'stim/scrambled/car/car(5).png', 'stim/scrambled/car/car(6).png', 'stim/scrambled/car/car(7).png', 'stim/scrambled/car/car(8).png', 'stim/scrambled/car/car(9).png', 'stim/scrambled/car/car(10).png', 'stim/scrambled/butterfly/butterfly(1).png', 'stim/scrambled/butterfly/butterfly(2).png', 'stim/scrambled/butterfly/butterfly(3).png', 'stim/scrambled/butterfly/butterfly(4).png', 'stim/scrambled/butterfly/butterfly(5).png', 'stim/scrambled/butterfly/butterfly(6).png', 'stim/scrambled/butterfly/butterfly(7).png', 'stim/scrambled/butterfly/butterfly(8).png', 'stim/scrambled/butterfly/butterfly(9).png', 'stim/scrambled/butterfly/butterfly(10).png', 'stim/scrambled/bread/bread(1).png', 'stim/scrambled/bread/bread(2).png', 'stim/scrambled/bread/bread(3).png', 'stim/scrambled/bread/bread(4).png', 'stim/scrambled/bread/bread(5).png', 'stim/scrambled/bread/bread(6).png', 'stim/scrambled/bread/bread(7).png', 'stim/scrambled/bread/bread(8).png', 'stim/scrambled/bread/bread(9).png', 'stim/scrambled/bread/bread(10).png', 'stim/scrambled/binoculars/binoculars(1).png', 'stim/scrambled/binoculars/binoculars(2).png', 'stim/scrambled/binoculars/binoculars(3).png', 'stim/scrambled/binoculars/binoculars(4).png', 'stim/scrambled/binoculars/binoculars(5).png', 'stim/scrambled/binoculars/binoculars(6).png', 'stim/scrambled/binoculars/binoculars(7).png', 'stim/scrambled/binoculars/binoculars(8).png', 'stim/scrambled/binoculars/binoculars(9).png', 'stim/scrambled/binoculars/binoculars(10).png', 'stim/scrambled/bear/bear(1).png', 'stim/scrambled/bear/bear(2).png', 'stim/scrambled/bear/bear(3).png', 'stim/scrambled/bear/bear(4).png', 'stim/scrambled/bear/bear(5).png', 'stim/scrambled/bear/bear(6).png', 'stim/scrambled/bear/bear(7).png', 'stim/scrambled/bear/bear(8).png', 'stim/scrambled/bear/bear(9).png', 'stim/scrambled/bear/bear(10).png', 'stim/scrambled/avocado/avocado(1).png', 'stim/scrambled/avocado/avocado(2).png', 'stim/scrambled/avocado/avocado(3).png', 'stim/scrambled/avocado/avocado(4).png', 'stim/scrambled/avocado/avocado(5).png', 'stim/scrambled/avocado/avocado(6).png', 'stim/scrambled/avocado/avocado(7).png', 'stim/scrambled/avocado/avocado(8).png', 'stim/scrambled/avocado/avocado(9).png', 'stim/scrambled/avocado/avocado(10).png', 'stim/scrambled/apple/apple(1).png', 'stim/scrambled/apple/apple(2).png', 'stim/scrambled/apple/apple(3).png', 'stim/scrambled/apple/apple(4).png', 'stim/scrambled/apple/apple(5).png', 'stim/scrambled/apple/apple(6).png', 'stim/scrambled/apple/apple(7).png', 'stim/scrambled/apple/apple(8).png', 'stim/scrambled/apple/apple(9).png', 'stim/scrambled/apple/apple(10).png', 'stim/scrambled/airplane/airplane(1).png', 'stim/scrambled/airplane/airplane(2).png', 'stim/scrambled/airplane/airplane(3).png', 'stim/scrambled/airplane/airplane(4).png', 'stim/scrambled/airplane/airplane(5).png', 'stim/scrambled/airplane/airplane(6).png', 'stim/scrambled/airplane/airplane(7).png', 'stim/scrambled/airplane/airplane(8).png', 'stim/scrambled/airplane/airplane(9).png', 'stim/scrambled/airplane/airplane(10).png', 'stim/practice_stim/truck/truck(1).JPEG', 'stim/practice_stim/truck/truck(2).JPEG', 'stim/practice_stim/truck/truck(3).JPEG', 'stim/practice_stim/truck/truck(4).JPEG', 'stim/practice_stim/truck/truck(5).JPEG', 'stim/practice_stim/truck/truck(6).JPEG', 'stim/practice_stim/truck/truck(7).JPEG', 'stim/practice_stim/truck/truck(8).JPEG', 'stim/practice_stim/truck/truck(9).JPEG', 'stim/practice_stim/truck/truck(10).JPEG', 'stim/practice_stim/tree/tree(1).JPEG', 'stim/practice_stim/tree/tree(2).JPEG', 'stim/practice_stim/tree/tree(3).JPEG', 'stim/practice_stim/tree/tree(4).JPEG', 'stim/practice_stim/tree/tree(5).JPEG', 'stim/practice_stim/tree/tree(6).JPEG', 'stim/practice_stim/tree/tree(7).JPEG', 'stim/practice_stim/tree/tree(8).JPEG', 'stim/practice_stim/tree/tree(9).JPEG', 'stim/practice_stim/tree/tree(10).JPEG', 'stim/practice_stim/leaf/leaf(1).JPEG', 'stim/practice_stim/leaf/leaf(2).JPEG', 'stim/practice_stim/leaf/leaf(3).JPEG', 'stim/practice_stim/leaf/leaf(4).JPEG', 'stim/practice_stim/leaf/leaf(5).JPEG', 'stim/practice_stim/leaf/leaf(6).JPEG', 'stim/practice_stim/leaf/leaf(7).JPEG', 'stim/practice_stim/leaf/leaf(8).JPEG', 'stim/practice_stim/leaf/leaf(9).JPEG', 'stim/practice_stim/leaf/leaf(10).JPEG', 'stim/practice_stim/hand/hand(1).JPEG', 'stim/practice_stim/hand/hand(2).JPEG', 'stim/practice_stim/hand/hand(3).JPEG', 'stim/practice_stim/hand/hand(4).JPEG', 'stim/practice_stim/hand/hand(5).JPEG', 'stim/practice_stim/hand/hand(6).JPEG', 'stim/practice_stim/hand/hand(7).JPEG', 'stim/practice_stim/hand/hand(8).JPEG', 'stim/practice_stim/hand/hand(9).JPEG', 'stim/practice_stim/hand/hand(10).JPEG', 'stim/practice_stim/flower/flower(1).JPEG', 'stim/practice_stim/flower/flower(2).JPEG', 'stim/practice_stim/flower/flower(3).JPEG', 'stim/practice_stim/flower/flower(4).JPEG', 'stim/practice_stim/flower/flower(5).JPEG', 'stim/practice_stim/flower/flower(6).JPEG', 'stim/practice_stim/flower/flower(7).JPEG', 'stim/practice_stim/flower/flower(8).JPEG', 'stim/practice_stim/flower/flower(9).JPEG', 'stim/practice_stim/flower/flower(10).JPEG', 'stim/practice_stim/duck/duck(1).JPEG', 'stim/practice_stim/duck/duck(2).JPEG', 'stim/practice_stim/duck/duck(3).JPEG', 'stim/practice_stim/duck/duck(4).JPEG', 'stim/practice_stim/duck/duck(5).JPEG', 'stim/practice_stim/duck/duck(6).JPEG', 'stim/practice_stim/duck/duck(7).JPEG', 'stim/practice_stim/duck/duck(8).JPEG', 'stim/practice_stim/duck/duck(9).JPEG', 'stim/practice_stim/duck/duck(10).JPEG', 'stim/practice_stim/dog/dog(1).JPEG', 'stim/practice_stim/dog/dog(2).JPEG', 'stim/practice_stim/dog/dog(3).JPEG', 'stim/practice_stim/dog/dog(4).JPEG', 'stim/practice_stim/dog/dog(5).JPEG', 'stim/practice_stim/dog/dog(6).JPEG', 'stim/practice_stim/dog/dog(7).JPEG', 'stim/practice_stim/dog/dog(8).JPEG', 'stim/practice_stim/dog/dog(9).JPEG', 'stim/practice_stim/dog/dog(10).JPEG', 'stim/practice_stim/chair/chair(1).JPEG', 'stim/practice_stim/chair/chair(2).JPEG', 'stim/practice_stim/chair/chair(3).JPEG', 'stim/practice_stim/chair/chair(4).JPEG', 'stim/practice_stim/chair/chair(5).JPEG', 'stim/practice_stim/chair/chair(6).JPEG', 'stim/practice_stim/chair/chair(7).JPEG', 'stim/practice_stim/chair/chair(8).JPEG', 'stim/practice_stim/chair/chair(9).JPEG', 'stim/practice_stim/chair/chair(10).JPEG', 'stim/practice_stim/bicycle/bicycle(1).JPEG', 'stim/practice_stim/bicycle/bicycle(2).JPEG', 'stim/practice_stim/bicycle/bicycle(3).JPEG', 'stim/practice_stim/bicycle/bicycle(4).JPEG', 'stim/practice_stim/bicycle/bicycle(5).JPEG', 'stim/practice_stim/bicycle/bicycle(6).JPEG', 'stim/practice_stim/bicycle/bicycle(7).JPEG', 'stim/practice_stim/bicycle/bicycle(8).JPEG', 'stim/practice_stim/bicycle/bicycle(9).JPEG', 'stim/practice_stim/bicycle/bicycle(10).JPEG', 'stim/natural/prac_image.png', 'stim/natural/train/train(1).png', 'stim/natural/train/train(2).png', 'stim/natural/train/train(3).png', 'stim/natural/train/train(4).png', 'stim/natural/train/train(5).png', 'stim/natural/train/train(6).png', 'stim/natural/train/train(7).png', 'stim/natural/train/train(8).png', 'stim/natural/train/train(9).png', 'stim/natural/train/train(10).png', 'stim/natural/snail/snail(1).png', 'stim/natural/snail/snail(2).png', 'stim/natural/snail/snail(3).png', 'stim/natural/snail/snail(4).png', 'stim/natural/snail/snail(5).png', 'stim/natural/snail/snail(6).png', 'stim/natural/snail/snail(7).png', 'stim/natural/snail/snail(8).png', 'stim/natural/snail/snail(9).png', 'stim/natural/snail/snail(10).png', 'stim/natural/pineapple/pineapple(1).png', 'stim/natural/pineapple/pineapple(2).png', 'stim/natural/pineapple/pineapple(3).png', 'stim/natural/pineapple/pineapple(4).png', 'stim/natural/pineapple/pineapple(5).png', 'stim/natural/pineapple/pineapple(6).png', 'stim/natural/pineapple/pineapple(7).png', 'stim/natural/pineapple/pineapple(8).png', 'stim/natural/pineapple/pineapple(9).png', 'stim/natural/pineapple/pineapple(10).png', 'stim/natural/mushroom/mushroom(1).png', 'stim/natural/mushroom/mushroom(2).png', 'stim/natural/mushroom/mushroom(3).png', 'stim/natural/mushroom/mushroom(4).png', 'stim/natural/mushroom/mushroom(5).png', 'stim/natural/mushroom/mushroom(6).png', 'stim/natural/mushroom/mushroom(7).png', 'stim/natural/mushroom/mushroom(8).png', 'stim/natural/mushroom/mushroom(9).png', 'stim/natural/mushroom/mushroom(10).png', 'stim/natural/lawnmower/lawnmower(1).png', 'stim/natural/lawnmower/lawnmower(2).png', 'stim/natural/lawnmower/lawnmower(3).png', 'stim/natural/lawnmower/lawnmower(4).png', 'stim/natural/lawnmower/lawnmower(5).png', 'stim/natural/lawnmower/lawnmower(6).png', 'stim/natural/lawnmower/lawnmower(7).png', 'stim/natural/lawnmower/lawnmower(8).png', 'stim/natural/lawnmower/lawnmower(9).png', 'stim/natural/lawnmower/lawnmower(10).png', 'stim/natural/house/house(1).png', 'stim/natural/house/house(2).png', 'stim/natural/house/house(3).png', 'stim/natural/house/house(4).png', 'stim/natural/house/house(5).png', 'stim/natural/house/house(6).png', 'stim/natural/house/house(7).png', 'stim/natural/house/house(8).png', 'stim/natural/house/house(9).png', 'stim/natural/house/house(10).png', 'stim/natural/dog/dog(1).png', 'stim/natural/dog/dog(2).png', 'stim/natural/dog/dog(3).png', 'stim/natural/dog/dog(4).png', 'stim/natural/dog/dog(5).png', 'stim/natural/dog/dog(6).png', 'stim/natural/dog/dog(7).png', 'stim/natural/dog/dog(8).png', 'stim/natural/dog/dog(9).png', 'stim/natural/dog/dog(10).png', 'stim/natural/cow/cow(1).png', 'stim/natural/cow/cow(2).png', 'stim/natural/cow/cow(3).png', 'stim/natural/cow/cow(4).png', 'stim/natural/cow/cow(5).png', 'stim/natural/cow/cow(6).png', 'stim/natural/cow/cow(7).png', 'stim/natural/cow/cow(8).png', 'stim/natural/cow/cow(9).png', 'stim/natural/cow/cow(10).png', 'stim/natural/corn/corn(1).png', 'stim/natural/corn/corn(2).png', 'stim/natural/corn/corn(3).png', 'stim/natural/corn/corn(4).png', 'stim/natural/corn/corn(5).png', 'stim/natural/corn/corn(6).png', 'stim/natural/corn/corn(7).png', 'stim/natural/corn/corn(8).png', 'stim/natural/corn/corn(9).png', 'stim/natural/corn/corn(10).png', 'stim/natural/cat/cat(1).png', 'stim/natural/cat/cat(2).png', 'stim/natural/cat/cat(3).png', 'stim/natural/cat/cat(4).png', 'stim/natural/cat/cat(5).png', 'stim/natural/cat/cat(6).png', 'stim/natural/cat/cat(7).png', 'stim/natural/cat/cat(8).png', 'stim/natural/cat/cat(9).png', 'stim/natural/cat/cat(10).png', 'stim/natural/car/car(1).png', 'stim/natural/car/car(2).png', 'stim/natural/car/car(3).png', 'stim/natural/car/car(4).png', 'stim/natural/car/car(5).png', 'stim/natural/car/car(6).png', 'stim/natural/car/car(7).png', 'stim/natural/car/car(8).png', 'stim/natural/car/car(9).png', 'stim/natural/car/car(10).png', 'stim/natural/butterfly/butterfly(1).png', 'stim/natural/butterfly/butterfly(2).png', 'stim/natural/butterfly/butterfly(3).png', 'stim/natural/butterfly/butterfly(4).png', 'stim/natural/butterfly/butterfly(5).png', 'stim/natural/butterfly/butterfly(6).png', 'stim/natural/butterfly/butterfly(7).png', 'stim/natural/butterfly/butterfly(8).png', 'stim/natural/butterfly/butterfly(9).png', 'stim/natural/butterfly/butterfly(10).png', 'stim/natural/bread/bread(1).png', 'stim/natural/bread/bread(2).png', 'stim/natural/bread/bread(3).png', 'stim/natural/bread/bread(4).png', 'stim/natural/bread/bread(5).png', 'stim/natural/bread/bread(6).png', 'stim/natural/bread/bread(7).png', 'stim/natural/bread/bread(8).png', 'stim/natural/bread/bread(9).png', 'stim/natural/bread/bread(10).png', 'stim/natural/binoculars/binoculars(1).png', 'stim/natural/binoculars/binoculars(2).png', 'stim/natural/binoculars/binoculars(3).png', 'stim/natural/binoculars/binoculars(4).png', 'stim/natural/binoculars/binoculars(5).png', 'stim/natural/binoculars/binoculars(6).png', 'stim/natural/binoculars/binoculars(7).png', 'stim/natural/binoculars/binoculars(8).png', 'stim/natural/binoculars/binoculars(9).png', 'stim/natural/binoculars/binoculars(10).png', 'stim/natural/bear/bear(1).png', 'stim/natural/bear/bear(2).png', 'stim/natural/bear/bear(3).png', 'stim/natural/bear/bear(4).png', 'stim/natural/bear/bear(5).png', 'stim/natural/bear/bear(6).png', 'stim/natural/bear/bear(7).png', 'stim/natural/bear/bear(8).png', 'stim/natural/bear/bear(9).png', 'stim/natural/bear/bear(10).png', 'stim/natural/avocado/avocado(1).png', 'stim/natural/avocado/avocado(2).png', 'stim/natural/avocado/avocado(3).png', 'stim/natural/avocado/avocado(4).png', 'stim/natural/avocado/avocado(5).png', 'stim/natural/avocado/avocado(6).png', 'stim/natural/avocado/avocado(7).png', 'stim/natural/avocado/avocado(8).png', 'stim/natural/avocado/avocado(9).png', 'stim/natural/avocado/avocado(10).png', 'stim/natural/apple/apple(1).png', 'stim/natural/apple/apple(2).png', 'stim/natural/apple/apple(3).png', 'stim/natural/apple/apple(4).png', 'stim/natural/apple/apple(5).png', 'stim/natural/apple/apple(6).png', 'stim/natural/apple/apple(7).png', 'stim/natural/apple/apple(8).png', 'stim/natural/apple/apple(9).png', 'stim/natural/apple/apple(10).png', 'stim/natural/airplane/airplane(1).png', 'stim/natural/airplane/airplane(2).png', 'stim/natural/airplane/airplane(3).png', 'stim/natural/airplane/airplane(4).png', 'stim/natural/airplane/airplane(5).png', 'stim/natural/airplane/airplane(6).png', 'stim/natural/airplane/airplane(7).png', 'stim/natural/airplane/airplane(8).png', 'stim/natural/airplane/airplane(9).png', 'stim/natural/airplane/airplane(10).png', 'stim/line_drawing/prac_image.png', 'stim/line_drawing/train/train(1).png', 'stim/line_drawing/train/train(2).png', 'stim/line_drawing/train/train(3).png', 'stim/line_drawing/train/train(4).png', 'stim/line_drawing/train/train(5).png', 'stim/line_drawing/train/train(6).png', 'stim/line_drawing/train/train(7).png', 'stim/line_drawing/train/train(8).png', 'stim/line_drawing/train/train(9).png', 'stim/line_drawing/train/train(10).png', 'stim/line_drawing/snail/snail(1).png', 'stim/line_drawing/snail/snail(2).png', 'stim/line_drawing/snail/snail(3).png', 'stim/line_drawing/snail/snail(4).png', 'stim/line_drawing/snail/snail(5).png', 'stim/line_drawing/snail/snail(6).png', 'stim/line_drawing/snail/snail(7).png', 'stim/line_drawing/snail/snail(8).png', 'stim/line_drawing/snail/snail(9).png', 'stim/line_drawing/snail/snail(10).png', 'stim/line_drawing/pineapple/pineapple(1).png', 'stim/line_drawing/pineapple/pineapple(2).png', 'stim/line_drawing/pineapple/pineapple(3).png', 'stim/line_drawing/pineapple/pineapple(4).png', 'stim/line_drawing/pineapple/pineapple(5).png', 'stim/line_drawing/pineapple/pineapple(6).png', 'stim/line_drawing/pineapple/pineapple(7).png', 'stim/line_drawing/pineapple/pineapple(8).png', 'stim/line_drawing/pineapple/pineapple(9).png', 'stim/line_drawing/pineapple/pineapple(10).png', 'stim/line_drawing/mushroom/mushroom(1).png', 'stim/line_drawing/mushroom/mushroom(2).png', 'stim/line_drawing/mushroom/mushroom(3).png', 'stim/line_drawing/mushroom/mushroom(4).png', 'stim/line_drawing/mushroom/mushroom(5).png', 'stim/line_drawing/mushroom/mushroom(6).png', 'stim/line_drawing/mushroom/mushroom(7).png', 'stim/line_drawing/mushroom/mushroom(8).png', 'stim/line_drawing/mushroom/mushroom(9).png', 'stim/line_drawing/mushroom/mushroom(10).png', 'stim/line_drawing/lawnmower/lawnmower(1).png', 'stim/line_drawing/lawnmower/lawnmower(2).png', 'stim/line_drawing/lawnmower/lawnmower(3).png', 'stim/line_drawing/lawnmower/lawnmower(4).png', 'stim/line_drawing/lawnmower/lawnmower(5).png', 'stim/line_drawing/lawnmower/lawnmower(6).png', 'stim/line_drawing/lawnmower/lawnmower(7).png', 'stim/line_drawing/lawnmower/lawnmower(8).png', 'stim/line_drawing/lawnmower/lawnmower(9).png', 'stim/line_drawing/lawnmower/lawnmower(10).png', 'stim/line_drawing/house/house(1).png', 'stim/line_drawing/house/house(2).png', 'stim/line_drawing/house/house(3).png', 'stim/line_drawing/house/house(4).png', 'stim/line_drawing/house/house(5).png', 'stim/line_drawing/house/house(6).png', 'stim/line_dra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rplane(6).png', 'stim/line_drawing/airplane/airplane(7).png', 'stim/line_drawing/airplane/airplane(8).png', 'stim/line_drawing/airplane/airplane(9).png', 'stim/line_drawing/airplane/airplane(10).png']
  Screen = 1
  Units = height
  Window size (pixels) = [1646, 1097]
  expName = GLINT
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine prompt
    RoutineSettingsComponent prompt
      saveStartStop = False
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    TextComponent label1
      letterHeight = 0.05
      pos = (-0.38, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $prompt1
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    TextComponent label2
      letterHeight = 0.05
      pos = (0.02, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $prompt2
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    TextComponent label3
      letterHeight = 0.05
      pos = (0.47, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $prompt3
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    TextComponent label4
      letterHeight = 0.05
      pos = (-0.38, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $prompt4
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    TextComponent label5
      letterHeight = 0.05
      pos = (0.02, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $prompt5
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    TextComponent label6
      letterHeight = 0.05
      pos = (0.47, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $prompt6
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    TextComponent label7
      letterHeight = 0.05
      pos = (-0.38,-0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $prompt7
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    TextComponent label8
      letterHeight = 0.05
      pos = (0.02, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $prompt8
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    TextComponent label9
      letterHeight = 0.05
      pos = (0.47, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $prompt9
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '1','2','3','4','5','6','7','8','9'
      correctAns = $corr_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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    CodeComponent response_converter
      Code Type = Auto->JS
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      End Routine:
        #Converts their response(1-9) to its object class label
        if key_resp.keys=='1':
            number_to_label = prompts[0]
        elif key_resp.keys=='2':
            number_to_label = prompts[1]
        elif key_resp.keys =='3':
            number_to_label = prompts[2]
        elif key_resp.keys =='4':
            number_to_label = prompts[3]
        elif key_resp.keys =='5':
            number_to_label = prompts[4]
        elif key_resp.keys =='6':
            number_to_label = prompts[5]
        elif key_resp.keys =='7':
            number_to_label = prompts[6]
        elif key_resp.keys =='8':
            number_to_label = prompts[7]
        elif key_resp.keys =='9':
            number_to_label = prompts[8]
        else: number_to_label = 'no response'

        #Adds the response label to the data sheet
        thisExp.addData('response_label', number_to_label)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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      text:
        Out of  time.

        Please respond more quickly next time.
  Routine fix
    RoutineSettingsComponent fix
      saveStartStop = False
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    TextComponent cross
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
      text [set every repeat] = +
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    CodeComponent code_js
      Code Type = JS
      Before JS Experiment:
        var anim_natural
        var inanim_natural
        var inanim_artificial
        var im_classes
        var corr_response
        var img_file
        var number_to_label
        var response_animacy
        var corr_animacy
        var block_name
        var condition
    CodeComponent code_prompt
      Code Type = Both
      Before Experiment:
        #Define the animacy categories
        print('loading stimulus categories')
        anim_natural = ['bear', 'butterfly', 'cat', 'cow', 'dog', 'snail']
        print(anim_natural)
        inanim_natural = ['apple', 'avocado', 'bread', 'corn', 'mushroom', 'pineapple']
        print(inanim_natural)
        inanim_artificial = ['airplane', 'binoculars', 'car','house', 'lawnmower', 'train']
        print(inanim_artificial)
      Before JS Experiment:
        console.log("loading stimulus categories");
        anim_natural = ["bear", "butterfly", "cat", "cow", "dog", "snail"];
        console.log(anim_natural);
        inanim_natural = ["apple", "avocado", "bread", "corn", "mushroom", "pineapple"];
        console.log(inanim_natural);
        inanim_artificial = ["airplane", "binoculars", "car", "house", "lawnmower", "train"];
        console.log(inanim_artificial);
      Begin JS Routine:
        int_rand = util.randint(1, 10);
        distract_anim_nat = anim_natural;
        util.shuffle(distract_anim_nat);
        distract_inanim_nat = inanim_natural;
        util.shuffle(distract_inanim_nat);
        distract_inanim_art = inanim_artificial;
        util.shuffle(distract_inanim_art);

        final_distract = [];
        im_n = 0;
        if ((object_category === "anim_natural")) {
            for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_anim_nat.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                obj_n = _pj_a[_pj_c];
                if ((distract_anim_nat[obj_n] !== object_class)) {
                    console.log(distract_anim_nat[obj_n]);
                    final_distract = final_distract.concat(distract_anim_nat[obj_n]);
                    im_n = (im_n + 1);
                    console.log(im_n);
                    if ((im_n === 2)) {
                        break;
                    }
                }
            }
            distract_anim_nat = final_distract.concat(object_class);
        } else {
            if ((object_category === "inanim_natural")) {
                for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_inanim_nat.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    obj_n = _pj_a[_pj_c];
                    if ((distract_inanim_nat[obj_n] !== object_class)) {
                        final_distract = final_distract.concat(distract_inanim_nat[obj_n]);
                        im_n = (im_n + 1);
                        if ((im_n === 2)) {
                            break;
                        }
                    }
                }
                distract_inanim_nat = final_distract.concat(object_class);
            } else {
                if ((object_category === "inanim_artificial")) {
                    for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_inanim_art.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        obj_n = _pj_a[_pj_c];
                        if ((distract_inanim_art[obj_n] !== object_class)) {
                            final_distract = final_distract.concat(distract_inanim_art[obj_n]);
                            im_n = (im_n + 1);
                            if ((im_n === 2)) {
                                break;
                            }
                        }
                    }
                    distract_inanim_art = final_distract.concat(object_class);
                }
            }
        }


        prompts = []
        distract_anim_nat = distract_anim_nat.slice(0, 3)
        distract_inanim_nat = distract_inanim_nat.slice(0, 3)
        distract_inanim_art = distract_inanim_art.slice(0,3)

        console.log(distract_anim_nat);
        console.log(distract_inanim_nat);
        console.log(distract_inanim_art);

        prompts = prompts.concat(distract_anim_nat)
        prompts = prompts.concat(distract_inanim_nat)
        prompts = prompts.concat(distract_inanim_art)
        img_file = `stim/${block_condition}/${object_class}/${object_class}(${int_rand}).png`;
        console.log(img_file);
        util.shuffle(prompts);
        console.log(prompts);

        //used for label
        prompt1 = "(1) " + prompts[0];
        prompt2 = "(2) " + prompts[1];
        prompt3 = "(3) " + prompts[2];
        prompt4 = "(4) " + prompts[3];
        prompt5 = "(5) " + prompts[4];
        prompt6 = "(6) " + prompts[5];
        prompt7 = "(7) " + prompts[6];
        prompt8 = "(8) " + prompts[7];
        prompt9 = "(9) " + prompts[8];

        //used for correct response

        prompt_1 = prompts[0];
        prompt_2 = prompts[1];
        prompt_3 = prompts[2];
        prompt_4 = prompts[3];
        prompt_5 = prompts[4];
        prompt_6 = prompts[5];
        prompt_7 = prompts[6];
        prompt_8 = prompts[7];
        prompt_9 = prompts[8];
      Begin Routine:
        int_rand = randint(1,10) # random number is generated to be used to pick image number from image class folders

        distract_anim_nat = anim_natural
        shuffle(distract_anim_nat)

        distract_inanim_nat = inanim_natural
        shuffle(distract_inanim_nat)

        distract_inanim_art = inanim_artificial
        shuffle(distract_inanim_art)

        final_distract = []
        im_n = 0

        if object_category == 'anim_natural':
            for obj_n in range(0,len(distract_anim_nat)):
                if distract_anim_nat[obj_n] != object_class:
                    print(distract_anim_nat[obj_n])
                    final_distract = final_distract + [distract_anim_nat[obj_n]]
                    im_n = im_n + 1

                    print(im_n)

                    if im_n ==2:
                        break

            distract_anim_nat = final_distract +  [object_class]
        elif object_category =='inanim_natural':
            for obj_n in range(0,len(distract_inanim_nat)):
                if distract_inanim_nat[obj_n] != object_class:
                    final_distract = final_distract + [distract_inanim_nat[obj_n]]
                    im_n = im_n + 1

                    if im_n ==2:
                        break

            distract_inanim_nat = final_distract +  [object_class]

        elif object_category == 'inanim_artificial':
            for obj_n in range(0,len(distract_inanim_art)):
                if distract_inanim_art[obj_n] != object_class:
                    final_distract = final_distract + [distract_inanim_art[obj_n]]
                    im_n = im_n + 1

                    if im_n ==2:
                        break

            distract_inanim_art = final_distract +  [object_class]


        print(distract_anim_nat)
        print(distract_inanim_nat)
        print(distract_inanim_art)
        prompts = distract_anim_nat[0:3] + distract_inanim_nat[0:3] + distract_inanim_art[0:3]

        #Image file path is established for each trial
        img_file = f'stim/{block_condition}/{object_class}/{object_class}({int_rand}).png'
        print(img_file)
        shuffle(prompts)
        print(prompts)

        #Assign prompts to all nine prompts
        prompt1 = '(1) ' + prompts[0]
        prompt2 = '(2) ' + prompts[1]
        prompt3 = '(3) ' + prompts[2]
        prompt4 = '(4) ' + prompts[3]
        prompt5 = '(5) ' + prompts[4]
        prompt6 = '(6) ' + prompts[5]
        prompt7 = '(7) ' + prompts[6]
        prompt8 = '(8) ' + prompts[7]
        prompt9 = '(9) ' + prompts[8]

        #Used for correct response
        prompt_1 = prompts[0];
        prompt_2 = prompts[1];
        prompt_3 = prompts[2];
        prompt_4 = prompts[3];
        prompt_5 = prompts[4];
        prompt_6 = prompts[5];
        prompt_7 = prompts[6];
        prompt_8 = prompts[7];
        prompt_9 = prompts[8];
    CodeComponent code_correct
      Code Type = Auto->JS
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      Begin Routine:
        #Go through list of prompts and determine which prompt is correct
        corr_label = object_class
        if prompt_1 == corr_label:
            corr_response = "1"

        if prompt_2 == corr_label:
            corr_response = "2"

        if prompt_3 == corr_label:
            corr_response = "3"

        if prompt_4 == corr_label:
            corr_response = "4"

        if prompt_5 == corr_label:
            corr_response = "5"

        if prompt_6 == corr_label:
            corr_response = "6"

        if prompt_7 == corr_label:
            corr_response = "7"

        if prompt_8 == corr_label:
            corr_response = "8"

        if prompt_9 == corr_label:
            corr_response = "9"

        #Adds correct response to data sheet
        thisExp.addData('corr_ans', corr_response)
        print(corr_response)
    CodeComponent prompts_data_sheet
      Code Type = Auto->JS
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      Begin Routine:
        #Add additional column to data sheet for prompts
        thisExp.addData('prompt_1', prompts[0])
        thisExp.addData('prompt_2', prompts[1])
        thisExp.addData('prompt_3', prompts[2])
        thisExp.addData('prompt_4', prompts[3])
        thisExp.addData('prompt_5', prompts[4])
        thisExp.addData('prompt_6', prompts[5])
        thisExp.addData('prompt_7', prompts[6])
        thisExp.addData('prompt_8', prompts[7])
        thisExp.addData('prompt_9', prompts[8])
  Routine stim
    RoutineSettingsComponent stim
      saveStartStop = False
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    ImageComponent stimuli
      image [set every repeat] = $img_file
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Instructions
    RoutineSettingsComponent Instructions
      disabled = True
      saveStartStop = False
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Images currently loading, please wait for instructions to appear
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    ResourceManagerComponent img_repo
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = True
      resources = ['stim/prompt.png', 'stim/rgb_mask.jpg', 'stim/wrong.png', 'stim/check_mark.png', 'stim/natural/prac_image.png', 'stim/scrambled/prac_image.png', 'stim/scrambled/train/train(1).png', 'stim/scrambled/train/train(2).png', 'stim/scrambled/train/train(3).png', 'stim/scrambled/train/train(4).png', 'stim/scrambled/train/train(5).png', 'stim/scrambled/train/train(6).png', 'stim/scrambled/train/train(7).png', 'stim/scrambled/train/train(8).png', 'stim/scrambled/train/train(9).png', 'stim/scrambled/train/train(10).png', 'stim/scrambled/snail/snail(1).png', 'stim/scrambled/snail/snail(2).png', 'stim/scrambled/snail/snail(3).png', 'stim/scrambled/snail/snail(4).png', 'stim/scrambled/snail/snail(5).png', 'stim/scrambled/snail/snail(6).png', 'stim/scrambled/snail/snail(7).png', 'stim/scrambled/snail/snail(8).png', 'stim/scrambled/snail/snail(9).png', 'stim/scrambled/snail/snail(10).png', 'stim/scrambled/pineapple/pineapple(1).png', 'stim/scrambled/pineapple/pineapple(2).png', 'stim/scrambled/pineapple/pineapple(3).png', 'stim/scrambled/pineapple/pineapple(4).png', 'stim/scrambled/pineapple/pineapple(5).png', 'stim/scrambled/pineapple/pineapple(6).png', 'stim/scrambled/pineapple/pineapple(7).png', 'stim/scrambled/pineapple/pineapple(8).png', 'stim/scrambled/pineapple/pineapple(9).png', 'stim/scrambled/pineapple/pineapple(10).png', 'stim/scrambled/mushroom/mushroom(1).png', 'stim/scrambled/mushroom/mushroom(2).png', 'stim/scrambled/mushroom/mushroom(3).png', 'stim/scrambled/mushroom/mushroom(4).png', 'stim/scrambled/mushroom/mushroom(5).png', 'stim/scrambled/mushroom/mushroom(6).png', 'stim/scrambled/mushroom/mushroom(7).png', 'stim/scrambled/mushroom/mushroom(8).png', 'stim/scrambled/mushroom/mushroom(9).png', 'stim/scrambled/mushroom/mushroom(10).png', 'stim/scrambled/lawnmower/lawnmower(1).png', 'stim/scrambled/lawnmower/lawnmower(2).png', 'stim/scrambled/lawnmower/lawnmower(3).png', 'stim/scrambled/lawnmower/lawnmower(4).png', 'stim/scrambled/lawnmower/lawnmower(5).png', 'stim/scrambled/lawnmower/lawnmower(6).png', 'stim/scrambled/lawnmower/lawnmower(7).png', 'stim/scrambled/lawnmower/lawnmower(8).png', 'stim/scrambled/lawnmower/lawnmower(9).png', 'stim/scrambled/lawnmower/lawnmower(10).png', 'stim/scrambled/house/house(1).png', 'stim/scrambled/house/house(2).png', 'stim/scrambled/house/house(3).png', 'stim/scrambled/house/house(4).png', 'stim/scrambled/house/house(5).png', 'stim/scrambled/house/house(6).png', 'stim/scrambled/house/house(7).png', 'stim/scrambled/house/house(8).png', 'stim/scrambled/house/house(9).png', 'stim/scrambled/house/house(10).png', 'stim/scrambled/dog/dog(1).png', 'stim/scrambled/dog/dog(2).png', 'stim/scrambled/dog/dog(3).png', 'stim/scrambled/dog/dog(4).png', 'stim/scrambled/dog/dog(5).png', 'stim/scrambled/dog/dog(6).png', 'stim/scrambled/dog/dog(7).png', 'stim/scrambled/dog/dog(8).png', 'stim/scrambled/dog/dog(9).png', 'stim/scrambled/dog/dog(10).png', 'stim/scrambled/cow/cow(1).png', 'stim/scrambled/cow/cow(2).png', 'stim/scrambled/cow/cow(3).png', 'stim/scrambled/cow/cow(4).png', 'stim/scrambled/cow/cow(5).png', 'stim/scrambled/cow/cow(6).png', 'stim/scrambled/cow/cow(7).png', 'stim/scrambled/cow/cow(8).png', 'stim/scrambled/cow/cow(9).png', 'stim/scrambled/cow/cow(10).png', 'stim/scrambled/corn/corn(1).png', 'stim/scrambled/corn/corn(2).png', 'stim/scrambled/corn/corn(3).png', 'stim/scrambled/corn/corn(4).png', 'stim/scrambled/corn/corn(5).png', 'stim/scrambled/corn/corn(6).png', 'stim/scrambled/corn/corn(7).png', 'stim/scrambled/corn/corn(8).png', 'stim/scrambled/corn/corn(9).png', 'stim/scrambled/corn/corn(10).png', 'stim/scrambled/cat/cat(1).png', 'stim/scrambled/cat/cat(2).png', 'stim/scrambled/cat/cat(3).png', 'stim/scrambled/cat/cat(4).png', 'stim/scrambled/cat/cat(5).png', 'stim/scrambled/cat/cat(6).png', 'stim/scrambled/cat/cat(7).png', 'stim/scrambled/cat/cat(8).png', 'stim/scrambled/cat/cat(9).png', 'stim/scrambled/cat/cat(10).png', 'stim/scrambled/car/car(1).png', 'stim/scrambled/car/car(2).png', 'stim/scrambled/car/car(3).png', 'stim/scrambled/car/car(4).png', 'stim/scrambled/car/car(5).png', 'stim/scrambled/car/car(6).png', 'stim/scrambled/car/car(7).png', 'stim/scrambled/car/car(8).png', 'stim/scrambled/car/car(9).png', 'stim/scrambled/car/car(10).png', 'stim/scrambled/butterfly/butterfly(1).png', 'stim/scrambled/butterfly/butterfly(2).png', 'stim/scrambled/butterfly/butterfly(3).png', 'stim/scrambled/butterfly/butterfly(4).png', 'stim/scrambled/butterfly/butterfly(5).png', 'stim/scrambled/butterfly/butterfly(6).png', 'stim/scrambled/butterfly/butterfly(7).png', 'stim/scrambled/butterfly/butterfly(8).png', 'stim/scrambled/butterfly/butterfly(9).png', 'stim/scrambled/butterfly/butterfly(10).png', 'stim/scrambled/bread/bread(1).png', 'stim/scrambled/bread/bread(2).png', 'stim/scrambled/bread/bread(3).png', 'stim/scrambled/bread/bread(4).png', 'stim/scrambled/bread/bread(5).png', 'stim/scrambled/bread/bread(6).png', 'stim/scrambled/bread/bread(7).png', 'stim/scrambled/bread/bread(8).png', 'stim/scrambled/bread/bread(9).png', 'stim/scrambled/bread/bread(10).png', 'stim/scrambled/binoculars/binoculars(1).png', 'stim/scrambled/binoculars/binoculars(2).png', 'stim/scrambled/binoculars/binoculars(3).png', 'stim/scrambled/binoculars/binoculars(4).png', 'stim/scrambled/binoculars/binoculars(5).png', 'stim/scrambled/binoculars/binoculars(6).png', 'stim/scrambled/binoculars/binoculars(7).png', 'stim/scrambled/binoculars/binoculars(8).png', 'stim/scrambled/binoculars/binoculars(9).png', 'stim/scrambled/binoculars/binoculars(10).png', 'stim/scrambled/bear/bear(1).png', 'stim/scrambled/bear/bear(2).png', 'stim/scrambled/bear/bear(3).png', 'stim/scrambled/bear/bear(4).png', 'stim/scrambled/bear/bear(5).png', 'stim/scrambled/bear/bear(6).png', 'stim/scrambled/bear/bear(7).png', 'stim/scrambled/bear/bear(8).png', 'stim/scrambled/bear/bear(9).png', 'stim/scrambled/bear/bear(10).png', 'stim/scrambled/avocado/avocado(1).png', 'stim/scrambled/avocado/avocado(2).png', 'stim/scrambled/avocado/avocado(3).png', 'stim/scrambled/avocado/avocado(4).png', 'stim/scrambled/avocado/avocado(5).png', 'stim/scrambled/avocado/avocado(6).png', 'stim/scrambled/avocado/avocado(7).png', 'stim/scrambled/avocado/avocado(8).png', 'stim/scrambled/avocado/avocado(9).png', 'stim/scrambled/avocado/avocado(10).png', 'stim/scrambled/apple/apple(1).png', 'stim/scrambled/apple/apple(2).png', 'stim/scrambled/apple/apple(3).png', 'stim/scrambled/apple/apple(4).png', 'stim/scrambled/apple/apple(5).png', 'stim/scrambled/apple/apple(6).png', 'stim/scrambled/apple/apple(7).png', 'stim/scrambled/apple/apple(8).png', 'stim/scrambled/apple/apple(9).png', 'stim/scrambled/apple/apple(10).png', 'stim/scrambled/airplane/airplane(1).png', 'stim/scrambled/airplane/airplane(2).png', 'stim/scrambled/airplane/airplane(3).png', 'stim/scrambled/airplane/airplane(4).png', 'stim/scrambled/airplane/airplane(5).png', 'stim/scrambled/airplane/airplane(6).png', 'stim/scrambled/airplane/airplane(7).png', 'stim/scrambled/airplane/airplane(8).png', 'stim/scrambled/airplane/airplane(9).png', 'stim/scrambled/airplane/airplane(10).png', 'stim/practice_stim/truck/truck(1).JPEG', 'stim/practice_stim/truck/truck(2).JPEG', 'stim/practice_stim/truck/truck(3).JPEG', 'stim/practice_stim/truck/truck(4).JPEG', 'stim/practice_stim/truck/truck(5).JPEG', 'stim/practice_stim/truck/truck(6).JPEG', 'stim/practice_stim/truck/truck(7).JPEG', 'stim/practice_stim/truck/truck(8).JPEG', 'stim/practice_stim/truck/truck(9).JPEG', 'stim/practice_stim/truck/truck(10).JPEG', 'stim/practice_stim/tree/tree(1).JPEG', 'stim/practice_stim/tree/tree(2).JPEG', 'stim/practice_stim/tree/tree(3).JPEG', 'stim/practice_stim/tree/tree(4).JPEG', 'stim/practice_stim/tree/tree(5).JPEG', 'stim/practice_stim/tree/tree(6).JPEG', 'stim/practice_stim/tree/tree(7).JPEG', 'stim/practice_stim/tree/tree(8).JPEG', 'stim/practice_stim/tree/tree(9).JPEG', 'stim/practice_stim/tree/tree(10).JPEG', 'stim/practice_stim/leaf/leaf(1).JPEG', 'stim/practice_stim/leaf/leaf(2).JPEG', 'stim/practice_stim/leaf/leaf(3).JPEG', 'stim/practice_stim/leaf/leaf(4).JPEG', 'stim/practice_stim/leaf/leaf(5).JPEG', 'stim/practice_stim/leaf/leaf(6).JPEG', 'stim/practice_stim/leaf/leaf(7).JPEG', 'stim/practice_stim/leaf/leaf(8).JPEG', 'stim/practice_stim/leaf/leaf(9).JPEG', 'stim/practice_stim/leaf/leaf(10).JPEG', 'stim/practice_stim/hand/hand(1).JPEG', 'stim/practice_stim/hand/hand(2).JPEG', 'stim/practice_stim/hand/hand(3).JPEG', 'stim/practice_stim/hand/hand(4).JPEG', 'stim/practice_stim/hand/hand(5).JPEG', 'stim/practice_stim/hand/hand(6).JPEG', 'stim/practice_stim/hand/hand(7).JPEG', 'stim/practice_stim/hand/hand(8).JPEG', 'stim/practice_stim/hand/hand(9).JPEG', 'stim/practice_stim/hand/hand(10).JPEG', 'stim/practice_stim/flower/flower(1).JPEG', 'stim/practice_stim/flower/flower(2).JPEG', 'stim/practice_stim/flower/flower(3).JPEG', 'stim/practice_stim/flower/flower(4).JPEG', 'stim/practice_stim/flower/flower(5).JPEG', 'stim/practice_stim/flower/flower(6).JPEG', 'stim/practice_stim/flower/flower(7).JPEG', 'stim/practice_stim/flower/flower(8).JPEG', 'stim/practice_stim/flower/flower(9).JPEG', 'stim/practice_stim/flower/flower(10).JPEG', 'stim/practice_stim/duck/duck(1).JPEG', 'stim/practice_stim/duck/duck(2).JPEG', 'stim/practice_stim/duck/duck(3).JPEG', 'stim/practice_stim/duck/duck(4).JPEG', 'stim/practice_stim/duck/duck(5).JPEG', 'stim/practice_stim/duck/duck(6).JPEG', 'stim/practice_stim/duck/duck(7).JPEG', 'stim/practice_stim/duck/duck(8).JPEG', 'stim/practice_stim/duck/duck(9).JPEG', 'stim/practice_stim/duck/duck(10).JPEG', 'stim/practice_stim/dog/dog(1).JPEG', 'stim/practice_stim/dog/dog(2).JPEG', 'stim/practice_stim/dog/dog(3).JPEG', 'stim/practice_stim/dog/dog(4).JPEG', 'stim/practice_stim/dog/dog(5).JPEG', 'stim/practice_stim/dog/dog(6).JPEG', 'stim/practice_stim/dog/dog(7).JPEG', 'stim/practice_stim/dog/dog(8).JPEG', 'stim/practice_stim/dog/dog(9).JPEG', 'stim/practice_stim/dog/dog(10).JPEG', 'stim/practice_stim/chair/chair(1).JPEG', 'stim/practice_stim/chair/chair(2).JPEG', 'stim/practice_stim/chair/chair(3).JPEG', 'stim/practice_stim/chair/chair(4).JPEG', 'stim/practice_stim/chair/chair(5).JPEG', 'stim/practice_stim/chair/chair(6).JPEG', 'stim/practice_stim/chair/chair(7).JPEG', 'stim/practice_stim/chair/chair(8).JPEG', 'stim/practice_stim/chair/chair(9).JPEG', 'stim/practice_stim/chair/chair(10).JPEG', 'stim/practice_stim/bicycle/bicycle(1).JPEG', 'stim/practice_stim/bicycle/bicycle(2).JPEG', 'stim/practice_stim/bicycle/bicycle(3).JPEG', 'stim/practice_stim/bicycle/bicycle(4).JPEG', 'stim/practice_stim/bicycle/bicycle(5).JPEG', 'stim/practice_stim/bicycle/bicycle(6).JPEG', 'stim/practice_stim/bicycle/bicycle(7).JPEG', 'stim/practice_stim/bicycle/bicycle(8).JPEG', 'stim/practice_stim/bicycle/bicycle(9).JPEG', 'stim/practice_stim/bicycle/bicycle(10).JPEG', 'stim/natural/prac_image.png', 'stim/natural/train/train(1).png', 'stim/natural/train/train(2).png', 'stim/natural/train/train(3).png', 'stim/natural/train/train(4).png', 'stim/natural/train/train(5).png', 'stim/natural/train/train(6).png', 'stim/natural/train/train(7).png', 'stim/natural/train/train(8).png', 'stim/natural/train/train(9).png', 'stim/natural/train/train(10).png', 'stim/natural/snail/snail(1).png', 'stim/natural/snail/snail(2).png', 'stim/natural/snail/snail(3).png', 'stim/natural/snail/snail(4).png', 'stim/natural/snail/snail(5).png', 'stim/natural/snail/snail(6).png', 'stim/natural/snail/snail(7).png', 'stim/natural/snail/snail(8).png', 'stim/natural/snail/snail(9).png', 'stim/natural/snail/snail(10).png', 'stim/natural/pineapple/pineapple(1).png', 'stim/natural/pineapple/pineapple(2).png', 'stim/natural/pineapple/pineapple(3).png', 'stim/natural/pineapple/pineapple(4).png', 'stim/natural/pineapple/pineapple(5).png', 'stim/natural/pineapple/pineapple(6).png', 'stim/natural/pineapple/pineapple(7).png', 'stim/natural/pineapple/pineapple(8).png', 'stim/natural/pineapple/pineapple(9).png', 'stim/natural/pineapple/pineapple(10).png', 'stim/natural/mushroom/mushroom(1).png', 'stim/natural/mushroom/mushroom(2).png', 'stim/natural/mushroom/mushroom(3).png', 'stim/natural/mushroom/mushroom(4).png', 'stim/natural/mushroom/mushroom(5).png', 'stim/natural/mushroom/mushroom(6).png', 'stim/natural/mushroom/mushroom(7).png', 'stim/natural/mushroom/mushroom(8).png', 'stim/natural/mushroom/mushroom(9).png', 'stim/natural/mushroom/mushroom(10).png', 'stim/natural/lawnmower/lawnmower(1).png', 'stim/natural/lawnmower/lawnmower(2).png', 'stim/natural/lawnmower/lawnmower(3).png', 'stim/natural/lawnmower/lawnmower(4).png', 'stim/natural/lawnmower/lawnmower(5).png', 'stim/natural/lawnmower/lawnmower(6).png', 'stim/natural/lawnmower/lawnmower(7).png', 'stim/natural/lawnmower/lawnmower(8).png', 'stim/natural/lawnmower/lawnmower(9).png', 'stim/natural/lawnmower/lawnmower(10).png', 'stim/natural/house/house(1).png', 'stim/natural/house/house(2).png', 'stim/natural/house/house(3).png', 'stim/natural/house/house(4).png', 'stim/natural/house/house(5).png', 'stim/natural/house/house(6).png', 'stim/natural/house/house(7).png', 'stim/natural/house/house(8).png', 'stim/natural/house/house(9).png', 'stim/natural/house/house(10).png', 'stim/natural/dog/dog(1).png', 'stim/natural/dog/dog(2).png', 'stim/natural/dog/dog(3).png', 'stim/natural/dog/dog(4).png', 'stim/natural/dog/dog(5).png', 'stim/natural/dog/dog(6).png', 'stim/natural/dog/dog(7).png', 'stim/natural/dog/dog(8).png', 'stim/natural/dog/dog(9).png', 'stim/natural/dog/dog(10).png', 'stim/natural/cow/cow(1).png', 'stim/natural/cow/cow(2).png', 'stim/natural/cow/cow(3).png', 'stim/natural/cow/cow(4).png', 'stim/natural/cow/cow(5).png', 'stim/natural/cow/cow(6).png', 'stim/natural/cow/cow(7).png', 'stim/natural/cow/cow(8).png', 'stim/natural/cow/cow(9).png', 'stim/natural/cow/cow(10).png', 'stim/natural/corn/corn(1).png', 'stim/natural/corn/corn(2).png', 'stim/natural/corn/corn(3).png', 'stim/natural/corn/corn(4).png', 'stim/natural/corn/corn(5).png', 'stim/natural/corn/corn(6).png', 'stim/natural/corn/corn(7).png', 'stim/natural/corn/corn(8).png', 'stim/natural/corn/corn(9).png', 'stim/natural/corn/corn(10).png', 'stim/natural/cat/cat(1).png', 'stim/natural/cat/cat(2).png', 'stim/natural/cat/cat(3).png', 'stim/natural/cat/cat(4).png', 'stim/natural/cat/cat(5).png', 'stim/natural/cat/cat(6).png', 'stim/natural/cat/cat(7).png', 'stim/natural/cat/cat(8).png', 'stim/natural/cat/cat(9).png', 'stim/natural/cat/cat(10).png', 'stim/natural/car/car(1).png', 'stim/natural/car/car(2).png', 'stim/natural/car/car(3).png', 'stim/natural/car/car(4).png', 'stim/natural/car/car(5).png', 'stim/natural/car/car(6).png', 'stim/natural/car/car(7).png', 'stim/natural/car/car(8).png', 'stim/natural/car/car(9).png', 'stim/natural/car/car(10).png', 'stim/natural/butterfly/butterfly(1).png', 'stim/natural/butterfly/butterfly(2).png', 'stim/natural/butterfly/butterfly(3).png', 'stim/natural/butterfly/butterfly(4).png', 'stim/natural/butterfly/butterfly(5).png', 'stim/natural/butterfly/butterfly(6).png', 'stim/natural/butterfly/butterfly(7).png', 'stim/natural/butterfly/butterfly(8).png', 'stim/natural/butterfly/butterfly(9).png', 'stim/natural/butterfly/butterfly(10).png', 'stim/natural/bread/bread(1).png', 'stim/natural/bread/bread(2).png', 'stim/natural/bread/bread(3).png', 'stim/natural/bread/bread(4).png', 'stim/natural/bread/bread(5).png', 'stim/natural/bread/bread(6).png', 'stim/natural/bread/bread(7).png', 'stim/natural/bread/bread(8).png', 'stim/natural/bread/bread(9).png', 'stim/natural/bread/bread(10).png', 'stim/natural/binoculars/binoculars(1).png', 'stim/natural/binoculars/binoculars(2).png', 'stim/natural/binoculars/binoculars(3).png', 'stim/natural/binoculars/binoculars(4).png', 'stim/natural/binoculars/binoculars(5).png', 'stim/natural/binoculars/binoculars(6).png', 'stim/natural/binoculars/binoculars(7).png', 'stim/natural/binoculars/binoculars(8).png', 'stim/natural/binoculars/binoculars(9).png', 'stim/natural/binoculars/binoculars(10).png', 'stim/natural/bear/bear(1).png', 'stim/natural/bear/bear(2).png', 'stim/natural/bear/bear(3).png', 'stim/natural/bear/bear(4).png', 'stim/natural/bear/bear(5).png', 'stim/natural/bear/bear(6).png', 'stim/natural/bear/bear(7).png', 'stim/natural/bear/bear(8).png', 'stim/natural/bear/bear(9).png', 'stim/natural/bear/bear(10).png', 'stim/natural/avocado/avocado(1).png', 'stim/natural/avocado/avocado(2).png', 'stim/natural/avocado/avocado(3).png', 'stim/natural/avocado/avocado(4).png', 'stim/natural/avocado/avocado(5).png', 'stim/natural/avocado/avocado(6).png', 'stim/natural/avocado/avocado(7).png', 'stim/natural/avocado/avocado(8).png', 'stim/natural/avocado/avocado(9).png', 'stim/natural/avocado/avocado(10).png', 'stim/natural/apple/apple(1).png', 'stim/natural/apple/apple(2).png', 'stim/natural/apple/apple(3).png', 'stim/natural/apple/apple(4).png', 'stim/natural/apple/apple(5).png', 'stim/natural/apple/apple(6).png', 'stim/natural/apple/apple(7).png', 'stim/natural/apple/apple(8).png', 'stim/natural/apple/apple(9).png', 'stim/natural/apple/apple(10).png', 'stim/natural/airplane/airplane(2).png', 'stim/natural/airplane/airplane(3).png', 'stim/natural/airplane/airplane(4).png', 'stim/natural/airplane/airplane(5).png', 'stim/natural/airplane/airplane(6).png', 'stim/natural/airplane/airplane(7).png', 'stim/natural/airplane/airplane(8).png', 'stim/natural/airplane/airplane(9).png', 'stim/natural/airplane/airplane(10).png', 'stim/natural/airplane/airplane(1).png', 'stim/line_drawing/prac_image.png', 'stim/line_drawing/train/train(1).png', 'stim/line_drawing/train/train(2).png', 'stim/line_drawing/train/train(3).png', 'stim/line_drawing/train/train(4).png', 'stim/line_drawing/train/train(5).png', 'stim/line_drawing/train/train(6).png', 'stim/line_drawing/train/train(7).png', 'stim/line_drawing/train/train(8).png', 'stim/line_drawing/train/train(9).png', 'stim/line_drawing/train/train(10).png', 'stim/line_drawing/snail/snail(1).png', 'stim/line_drawing/snail/snail(2).png', 'stim/line_drawing/snail/snail(3).png', 'stim/line_drawing/snail/snail(4).png', 'stim/line_drawing/snail/snail(5).png', 'stim/line_drawing/snail/snail(6).png', 'stim/line_drawing/snail/snail(7).png', 'stim/line_drawing/snail/snail(8).png', 'stim/line_drawing/snail/snail(9).png', 'stim/line_drawing/snail/snail(10).png', 'stim/line_drawing/pineapple/pineapple(1).png', 'stim/line_drawing/pineapple/pineapple(2).png', 'stim/line_drawing/pineapple/pineapple(3).png', 'stim/line_drawing/pineapple/pineapple(4).png', 'stim/line_drawing/pineapple/pineapple(5).png', 'stim/line_drawing/pineapple/pineapple(6).png', 'stim/line_drawing/pineapple/pineapple(7).png', 'stim/line_drawing/pineapple/pineapple(8).png', 'stim/line_drawing/pineapple/pineapple(9).png', 'stim/line_drawing/pineapple/pineapple(10).png', 'stim/line_drawing/mushroom/mushroom(1).png', 'stim/line_drawing/mushroom/mushroom(2).png', 'stim/line_drawing/mushroom/mushroom(3).png', 'stim/line_drawing/mushroom/mushroom(4).png', 'stim/line_drawing/mushroom/mushroom(5).png', 'stim/line_drawing/mushroom/mushroom(6).png', 'stim/line_drawing/mushroom/mushroom(7).png', 'stim/line_drawing/mushroom/mushroom(8).png', 'stim/line_drawing/mushroom/mushroom(9).png', 'stim/line_drawing/mushroom/mushroom(10).png', 'stim/line_drawing/lawnmower/lawnmower(1).png', 'stim/line_drawing/lawnmower/lawnmower(2).png', 'stim/line_drawing/lawnmower/lawnmower(3).png', 'stim/line_drawing/lawnmower/lawnmower(4).png', 'stim/line_drawing/lawnmower/lawnmower(5).png', 'stim/line_drawing/lawnmower/lawnmower(6).png', 'stim/line_drawing/lawnmower/lawnmower(7).png', 'stim/line_drawing/lawnmower/lawnmower(8).png', 'stim/line_drawing/lawnmower/lawnmower(9).png', 'stim/line_drawing/lawnmower/lawnmower(10).png', 'stim/line_drawing/house/house(1).png', 'stim/line_drawing/house/house(2).png', 'stim/line_drawing/house/house(3).png', 'stim/line_drawing/house/house(4).png', 'stim/line_drawing/house/house(5).png', 'stim/line_drawing/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rplane(6).png', 'stim/line_drawing/airplane/airplane(7).png', 'stim/line_drawing/airplane/airplane(8).png', 'stim/line_drawing/airplane/airplane(9).png', 'stim/line_drawing/airplane/airplane(10).png']
      startVal [time (s)] = 0
  Routine prac_fix
    RoutineSettingsComponent prac_fix
      saveStartStop = False
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    TextComponent practice_cross
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent prac_code_js
      Code Type = JS
      Before JS Experiment:
        var anim_natural
        var inanim_natural
        var inanim_artificial
        var anim_natural_prac
        var inanim_natural_prac
        var inanim_artificial_prac
        var im_classes
        var corr_response
        var img_file
    CodeComponent prac_code_prompt
      Code Type = Both
      Before Experiment:
        print('test')
        anim_natural_prac = ['hand', 'duck', 'dog']
        print(anim_natural_prac)
        inanim_natural_prac = ['flower', 'tree', 'leaf']
        print(inanim_natural_prac)
        inanim_artificial_prac = ['bicycle', 'chair', 'truck']
        print(inanim_artificial_prac)
      Before JS Experiment:
        console.log("test");
        anim_natural_prac = ["hand", "duck", "dog"];
        console.log(anim_natural);
        inanim_natural_prac = ["flower", "tree", "leaf"];
        console.log(inanim_natural_prac);
        inanim_artificial_prac = ["bicycle", "chair", "truck"];
        console.log(inanim_artificial_prac);
      Begin JS Routine:
        int_rand = util.randint(1, 10);
        distract_anim_nat = anim_natural_prac;
        util.shuffle(distract_anim_nat);
        distract_inanim_nat = inanim_natural_prac;
        util.shuffle(distract_inanim_nat);
        distract_inanim_art = inanim_artificial_prac;
        util.shuffle(distract_inanim_art);

        final_distract = [];
        im_n = 0;
        if ((object_category === "anim_natural")) {
            for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_anim_nat.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                obj_n = _pj_a[_pj_c];
                if ((distract_anim_nat[obj_n] !== object_class)) {
                    console.log(distract_anim_nat[obj_n]);
                    final_distract = final_distract.concat(distract_anim_nat[obj_n]);
                    im_n = (im_n + 1);
                    console.log(im_n);
                    if ((im_n === 2)) {
                        break;
                    }
                }
            }
            distract_anim_nat = final_distract.concat(object_class);
        } else {
            if ((object_category === "inanim_natural")) {
                for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_inanim_nat.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    obj_n = _pj_a[_pj_c];
                    if ((distract_inanim_nat[obj_n] !== object_class)) {
                        final_distract = final_distract.concat(distract_inanim_nat[obj_n]);
                        im_n = (im_n + 1);
                        if ((im_n === 2)) {
                            break;
                        }
                    }
                }
                distract_inanim_nat = final_distract.concat(object_class);
            } else {
                if ((object_category === "inanim_artificial")) {
                    for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_inanim_art.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        obj_n = _pj_a[_pj_c];
                        if ((distract_inanim_art[obj_n] !== object_class)) {
                            final_distract = final_distract.concat(distract_inanim_art[obj_n]);
                            im_n = (im_n + 1);
                            if ((im_n === 2)) {
                                break;
                            }
                        }
                    }
                    distract_inanim_art = final_distract.concat(object_class);
                }
            }
        }


        prompts = []
        distract_anim_nat = distract_anim_nat.slice(0, 3)
        distract_inanim_nat = distract_inanim_nat.slice(0, 3)
        distract_inanim_art = distract_inanim_art.slice(0,3)

        console.log(distract_anim_nat);
        console.log(distract_inanim_nat);
        console.log(distract_inanim_art);

        prompts = prompts.concat(distract_anim_nat)
        prompts = prompts.concat(distract_inanim_nat)
        prompts = prompts.concat(distract_inanim_art)
        img_file = `stim/practice_stim/${object_class}/${object_class}(${int_rand}).JPEG`;
        console.log(img_file);
        util.shuffle(prompts);
        console.log(prompts);

        //These prompts used as labels in prompt component
        prompt1 = "(1) " + prompts[0];
        prompt2 = "(2) " + prompts[1];
        prompt3 = "(3) " + prompts[2];
        prompt4 = "(4) " + prompts[3];
        prompt5 = "(5) " + prompts[4];
        prompt6 = "(6) " + prompts[5];
        prompt7 = "(7) " + prompts[6];
        prompt8 = "(8) " + prompts[7];
        prompt9 = "(9) " + prompts[8];

        //These prompts used for calculating correct response
        prompt_1 = prompts[0];
        prompt_2 = prompts[1];
        prompt_3 = prompts[2];
        prompt_4 = prompts[3];
        prompt_5 = prompts[4];
        prompt_6 = prompts[5];
        prompt_7 = prompts[6];
        prompt_8 = prompts[7];
        prompt_9 = prompts[8];
      Begin Routine:
        int_rand = randint(1,10) # random number is generated to be used to pick image number from image class folders

        distract_anim_nat = anim_natural_prac
        shuffle(distract_anim_nat)

        distract_inanim_nat = inanim_natural_prac
        shuffle(distract_inanim_nat)

        distract_inanim_art = inanim_artificial_prac
        shuffle(distract_inanim_art)

        final_distract = []
        im_n = 0

        if object_category == 'anim_natural':
            for obj_n in range(0,len(distract_anim_nat)):
                if distract_anim_nat[obj_n] != object_class:
                    print(distract_anim_nat[obj_n])
                    final_distract = final_distract + [distract_anim_nat[obj_n]]
                    im_n = im_n + 1

                    print(im_n)

                    if im_n ==2:
                        break

            distract_anim_nat = final_distract +  [object_class]
        elif object_category =='inanim_natural':
            for obj_n in range(0,len(distract_inanim_nat)):
                if distract_inanim_nat[obj_n] != object_class:
                    final_distract = final_distract + [distract_inanim_nat[obj_n]]
                    im_n = im_n + 1

                    if im_n ==2:
                        break

            distract_inanim_nat = final_distract +  [object_class]

        elif object_category == 'inanim_artificial':
            for obj_n in range(0,len(distract_inanim_art)):
                if distract_inanim_art[obj_n] != object_class:
                    final_distract = final_distract + [distract_inanim_art[obj_n]]
                    im_n = im_n + 1

                    if im_n ==2:
                        break

            distract_inanim_art = final_distract +  [object_class]


        print(distract_anim_nat)
        print(distract_inanim_nat)
        print(distract_inanim_art)
        prompts = distract_anim_nat[0:3] + distract_inanim_nat[0:3] + distract_inanim_art[0:3]
        #prompts = [distract_anim_nat[0]] + [distract_anim_nat[1]] + [distract_anim_nat[2]] + [distract_inanim_nat[0]] + [distract_inanim_nat[1]] + [distract_inanim_nat[2]] + [distract_inanim_art[0]] + [distract_inanim_art[1]] + [distract_inanim_art[2]]

        img_file = f'stim/practice_stim/{object_class}/{object_class}({int_rand}).JPEG'
        print(img_file)
        shuffle(prompts)
        print(prompts)

        #Assign prompts to all nine prompts
        prompt1 = '(1) ' + prompts[0]
        prompt2 = '(2) ' + prompts[1]
        prompt3 = '(3) ' + prompts[2]
        prompt4 = '(4) ' + prompts[3]
        prompt5 = '(5) ' + prompts[4]
        prompt6 = '(6) ' + prompts[5]
        prompt7 = '(7) ' + prompts[6]
        prompt8 = '(8) ' + prompts[7]
        prompt9 = '(9) ' + prompts[8]

        #Used for correct response
        prompt_1 = prompts[0];
        prompt_2 = prompts[1];
        prompt_3 = prompts[2];
        prompt_4 = prompts[3];
        prompt_5 = prompts[4];
        prompt_6 = prompts[5];
        prompt_7 = prompts[6];
        prompt_8 = prompts[7];
        prompt_9 = prompts[8];
    CodeComponent prac_code_correct
      Code Type = Auto->JS
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      Begin Routine:
        corr_label = object_class

        if prompt_1 == corr_label:
            corr_response = "1"

        if prompt_2 == corr_label:
            corr_response = "2"

        if prompt_3 == corr_label:
            corr_response = "3"

        if prompt_4 == corr_label:
            corr_response = "4"

        if prompt_5 == corr_label:
            corr_response = "5"

        if prompt_6 == corr_label:
            corr_response = "6"

        if prompt_7 == corr_label:
            corr_response = "7"

        if prompt_8 == corr_label:
            corr_response = "8"

        if prompt_9 == corr_label:
            corr_response = "9"


        thisExp.addData('CorrectResponse', corr_response)
        print(corr_response)
    CodeComponent prac_code_prompt_data
      Code Type = Auto->JS
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      Begin Routine:
        #Add prompts for each trial into data sheet
        thisExp.addData('prac_prompt_1', prompts[0])
        thisExp.addData('prac_prompt_2', prompts[1])
        thisExp.addData('prac_prompt_3', prompts[2])
        thisExp.addData('prac_prompt_4', prompts[3])
        thisExp.addData('prac_prompt_5', prompts[4])
        thisExp.addData('prac_prompt_6', prompts[5])
        thisExp.addData('prac_prompt_7', prompts[6])
        thisExp.addData('prac_prompt_8', prompts[7])
        thisExp.addData('prac_prompt_9', prompts[8])
  Routine prac_stim
    RoutineSettingsComponent prac_stim
      saveStartStop = False
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    ImageComponent prac_stimuli
      image [set every repeat] = $img_file
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine prac_prompt
    RoutineSettingsComponent prac_prompt
      saveStartStop = False
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    TextComponent prac_label1
      letterHeight = 0.05
      pos = (-0.4, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt1
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    TextComponent prac_label2
      letterHeight = 0.05
      pos = (0.0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt2
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    TextComponent prac_label3
      letterHeight = 0.05
      pos = (0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt3
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    TextComponent prac_label4
      letterHeight = 0.05
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt4
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    TextComponent prac_label5
      letterHeight = 0.05
      pos = (0.0, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt5
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    TextComponent prac_label6
      letterHeight = 0.05
      pos = (0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt6
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    TextComponent prac_label7
      letterHeight = 0.05
      pos = (-0.4,-0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt7
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    TextComponent prac_label8
      letterHeight = 0.05
      pos = (0.0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt8
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    TextComponent prac_label9
      letterHeight = 0.05
      pos = (0.45, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt9
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    KeyboardComponent prac_key_resp
      allowedKeys [set every repeat] = '1','2','3','4','5','6','7','8','9'
      correctAns = $corr_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine intro_experiment
    RoutineSettingsComponent intro_experiment
      saveStartStop = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        prac_image = f'stim/{block_condition}/prac_image.png'
        print(prac_image)
    TextComponent text_top2
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Sometimes the images may look a little strange.

        In this example, the correct label would be turtle, and so you would press the 5 key.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_ex
      image [set every repeat] = $prac_image
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_prompt2
      image [set every repeat] = stim/prompt.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_begin
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the spacebar to start the task.
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    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        const object_classes = ['airplane', 'apple', 'avocado', 'bear', 'binoculars', 'bread', 'butterfly', 'car', 'cat', 'corn', 'cow', 'dog', 'house', 'lawnmower', 'mushroom', 'pineapple', 'snail', 'train'];
        const file_list = [];

        object_classes.forEach(object => {
          for (let i = 1; i <= 10; i++) {
              let filename;


              filename = `stim/${block_condition}/${object}/${object}(${i}).png`;
              //console.log(filename)
              file_list.push(filename);
              }
        });
        console.log(file_list);
        psychoJS.serverManager.prepareResources(file_list);
  Routine intro_practice
    RoutineSettingsComponent intro_practice
      saveStartStop = False
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    ResourceManagerComponent pract_resources
      actionType = Start and Check
      checkAll = False
      disabled = True
      forceEndRoutine = False
      resources = ['stim/scrambled/prac_image.png', 'stim/natural/prac_image.png', 'stim/line_drawing/prac_image.png', 'stim/check_mark.png', 'stim/prompt.png', 'stim/rgb_mask.jpg', 'stim/wrong.png', 'stim/practice_stim/truck/truck(1).JPEG', 'stim/practice_stim/truck/truck(2).JPEG', 'stim/practice_stim/truck/truck(3).JPEG', 'stim/practice_stim/truck/truck(4).JPEG', 'stim/practice_stim/truck/truck(5).JPEG', 'stim/practice_stim/truck/truck(6).JPEG', 'stim/practice_stim/truck/truck(7).JPEG', 'stim/practice_stim/truck/truck(8).JPEG', 'stim/practice_stim/truck/truck(9).JPEG', 'stim/practice_stim/truck/truck(10).JPEG', 'stim/practice_stim/tree/tree(1).JPEG', 'stim/practice_stim/tree/tree(2).JPEG', 'stim/practice_stim/tree/tree(3).JPEG', 'stim/practice_stim/tree/tree(4).JPEG', 'stim/practice_stim/tree/tree(5).JPEG', 'stim/practice_stim/tree/tree(6).JPEG', 'stim/practice_stim/tree/tree(7).JPEG', 'stim/practice_stim/tree/tree(8).JPEG', 'stim/practice_stim/tree/tree(9).JPEG', 'stim/practice_stim/tree/tree(10).JPEG', 'stim/practice_stim/leaf/leaf(1).JPEG', 'stim/practice_stim/leaf/leaf(2).JPEG', 'stim/practice_stim/leaf/leaf(3).JPEG', 'stim/practice_stim/leaf/leaf(4).JPEG', 'stim/practice_stim/leaf/leaf(5).JPEG', 'stim/practice_stim/leaf/leaf(6).JPEG', 'stim/practice_stim/leaf/leaf(7).JPEG', 'stim/practice_stim/leaf/leaf(8).JPEG', 'stim/practice_stim/leaf/leaf(9).JPEG', 'stim/practice_stim/leaf/leaf(10).JPEG', 'stim/practice_stim/hand/hand(1).JPEG', 'stim/practice_stim/hand/hand(2).JPEG', 'stim/practice_stim/hand/hand(3).JPEG', 'stim/practice_stim/hand/hand(4).JPEG', 'stim/practice_stim/hand/hand(5).JPEG', 'stim/practice_stim/hand/hand(6).JPEG', 'stim/practice_stim/hand/hand(7).JPEG', 'stim/practice_stim/hand/hand(8).JPEG', 'stim/practice_stim/hand/hand(9).JPEG', 'stim/practice_stim/hand/hand(10).JPEG', 'stim/practice_stim/flower/flower(1).JPEG', 'stim/practice_stim/flower/flower(2).JPEG', 'stim/practice_stim/flower/flower(3).JPEG', 'stim/practice_stim/flower/flower(4).JPEG', 'stim/practice_stim/flower/flower(5).JPEG', 'stim/practice_stim/flower/flower(6).JPEG', 'stim/practice_stim/flower/flower(7).JPEG', 'stim/practice_stim/flower/flower(8).JPEG', 'stim/practice_stim/flower/flower(9).JPEG', 'stim/practice_stim/flower/flower(10).JPEG', 'stim/practice_stim/duck/duck(1).JPEG', 'stim/practice_stim/duck/duck(2).JPEG', 'stim/practice_stim/duck/duck(3).JPEG', 'stim/practice_stim/duck/duck(4).JPEG', 'stim/practice_stim/duck/duck(5).JPEG', 'stim/practice_stim/duck/duck(6).JPEG', 'stim/practice_stim/duck/duck(7).JPEG', 'stim/practice_stim/duck/duck(8).JPEG', 'stim/practice_stim/duck/duck(9).JPEG', 'stim/practice_stim/duck/duck(10).JPEG', 'stim/practice_stim/dog/dog(1).JPEG', 'stim/practice_stim/dog/dog(2).JPEG', 'stim/practice_stim/dog/dog(3).JPEG', 'stim/practice_stim/dog/dog(4).JPEG', 'stim/practice_stim/dog/dog(5).JPEG', 'stim/practice_stim/dog/dog(6).JPEG', 'stim/practice_stim/dog/dog(7).JPEG', 'stim/practice_stim/dog/dog(8).JPEG', 'stim/practice_stim/dog/dog(9).JPEG', 'stim/practice_stim/dog/dog(10).JPEG', 'stim/practice_stim/chair/chair(1).JPEG', 'stim/practice_stim/chair/chair(2).JPEG', 'stim/practice_stim/chair/chair(3).JPEG', 'stim/practice_stim/chair/chair(4).JPEG', 'stim/practice_stim/chair/chair(5).JPEG', 'stim/practice_stim/chair/chair(6).JPEG', 'stim/practice_stim/chair/chair(7).JPEG', 'stim/practice_stim/chair/chair(8).JPEG', 'stim/practice_stim/chair/chair(9).JPEG', 'stim/practice_stim/chair/chair(10).JPEG', 'stim/practice_stim/bicycle/bicycle(1).JPEG', 'stim/practice_stim/bicycle/bicycle(2).JPEG', 'stim/practice_stim/bicycle/bicycle(3).JPEG', 'stim/practice_stim/bicycle/bicycle(4).JPEG', 'stim/practice_stim/bicycle/bicycle(5).JPEG', 'stim/practice_stim/bicycle/bicycle(6).JPEG', 'stim/practice_stim/bicycle/bicycle(7).JPEG', 'stim/practice_stim/bicycle/bicycle(8).JPEG', 'stim/practice_stim/bicycle/bicycle(9).JPEG', 'stim/practice_stim/bicycle/bicycle(10).JPEG']
      startVal [time (s)] = 0
    TextComponent intro_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be asked to label images.

        On each trial, an image will appear, followed by 9 labels.

        Your job is to identify the image by pressing a number corresponding to the image label.

        The images may be shown quickly.

        Press the space bar to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intro_fix
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = First, a fixation cross will be presented to direct your attention towards the center of the screen where the image will be presented to you. Press the space bar to proceed. 
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intro_stim
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = An image will be presented in the center of the image. In this example, an image of a cat has been presented. Press the space bar to proceed. 
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    ImageComponent image
      image [set every repeat] = Stim/cat/cat(1).JPEG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruct_practice
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = We will have you proceed with a few practice trials to get a sense of what the actual trials feel like. The images in the practice trials will be presented slightly longer than the test trial images. When you are ready to begin the practice trials, simply press the space bar.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intro_prompt
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = A list of nine image classes will be shown with a corresponding number. You will press the number that corresponds to the image class that best matches the image previously shown. In this example, that would be the image class "cat", therefore you would press the number "3". Press "3" to continue. 
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    ImageComponent image_2
      image = Stim/ex_prompt.png
      pos = (0, -0.1)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = '3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prac_feedback
    RoutineSettingsComponent prac_feedback
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        feed_img =''
        if prac_key_resp.keys == corr_response:
            feed_img = 'stim/check_mark.png'

        elif prac_key_resp.keys != corr_response:
            feed_img = 'stim/wrong.png'
    ImageComponent img_feedback
      image [set every repeat] = $feed_img
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine intro_practice_2
    RoutineSettingsComponent intro_practice_2
      saveStartStop = False
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    TextComponent text_top
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this example, the correct label would be chair, and so you would press the 1 key.
    TextComponent text_bottom
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please respond as quickly, but as accurately as possible.

        Press the spacebar to do some practice trials.
    ImageComponent image_example
      image [set every repeat] = stim/practice_stim/chair/chair(2).JPEG
      pos = (-0.3, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_prompt
      image [set every repeat] = stim/prompt.png
      pos = (0.3, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine intro_experiment_2
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  Routine instructions_test
    RoutineSettingsComponent instructions_test
      saveStartStop = False
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    TextComponent text_7
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let's review the instructions one more time.

        In this task, you will be asked to label images.

        On each trial, an image will appear, followed by 9 labels.

        Your job is to identify the image by pressing a number corresponding to the image label.

        The images may be shown quickly.

        Please press the space bar to continue.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine mask
    RoutineSettingsComponent mask
      saveStartStop = False
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    ImageComponent image_mask
      image [set every repeat] = stim/rgb_mask.jpg
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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  Routine prac_mask
    RoutineSettingsComponent prac_mask
      saveStartStop = False
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    ImageComponent prac_image_mask
      image [set every repeat] = stim/rgb_mask.jpg
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.150
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  Routine correct
    RoutineSettingsComponent correct
      saveStartStop = False
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    CodeComponent code_animacy
      Code Type = Auto->JS
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      Begin Routine:
        #Add response animacy category to data sheet
        if number_to_label in anim_natural:
            response_animacy = 'anim_natural'
        elif number_to_label in inanim_natural:
            response_animacy = 'inanim_natural'
        elif number_to_label in inanim_artificial:
            response_animacy = 'inanim_artificial'
        else: response_animacy = 'no response'

        thisExp.addData('response_animacy', response_animacy)

        #Check whether animacy category is correct
        if response_animacy == object_category:
            corr_animacy = 1
        else:
            corr_animacy = 0

        thisExp.addData('corr_animacy', corr_animacy)

        thisExp.addData('img_condition', block_condition)
  Routine fix_ld
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    TextComponent cross_ld
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
      text [set every repeat] = +
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    CodeComponent code_js_ld
      Code Type = JS
      Before JS Experiment:
        var anim_natural
        var inanim_natural
        var inanim_artificial
        var im_classes
        var corr_response
        var img_file
        var number_to_label
        var response_animacy
        var corr_animacy
      Begin JS Routine:
        if (!run_linedrawing) {
          continueRoutine = false;
        }
    CodeComponent code_prompt_ld
      Code Type = Both
      Before Experiment:
        #Define the animacy categories
        print('loading stimulus categories')
        anim_natural = ['bear', 'butterfly', 'cat', 'cow', 'dog', 'snail']
        print(anim_natural)
        inanim_natural = ['apple', 'avocado', 'bread', 'corn', 'mushroom', 'pineapple']
        print(inanim_natural)
        inanim_artificial = ['airplane', 'binoculars', 'car','house', 'lawnmower', 'train']
        print(inanim_artificial)
      Before JS Experiment:
        console.log("loading stimulus categories");
        anim_natural = ["bear", "butterfly", "cat", "cow", "dog", "snail"];
        console.log(anim_natural);
        inanim_natural = ["apple", "avocado", "bread", "corn", "mushroom", "pineapple"];
        console.log(inanim_natural);
        inanim_artificial = ["airplane", "binoculars", "car", "house", "lawnmower", "train"];
        console.log(inanim_artificial);
      Begin JS Routine:
        int_rand = util.randint(1, 10);
        distract_anim_nat = anim_natural;
        util.shuffle(distract_anim_nat);
        distract_inanim_nat = inanim_natural;
        util.shuffle(distract_inanim_nat);
        distract_inanim_art = inanim_artificial;
        util.shuffle(distract_inanim_art);

        final_distract = [];
        im_n = 0;
        if ((object_category === "anim_natural")) {
            for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_anim_nat.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                obj_n = _pj_a[_pj_c];
                if ((distract_anim_nat[obj_n] !== object_class)) {
                    console.log(distract_anim_nat[obj_n]);
                    final_distract = final_distract.concat(distract_anim_nat[obj_n]);
                    im_n = (im_n + 1);
                    console.log(im_n);
                    if ((im_n === 2)) {
                        break;
                    }
                }
            }
            distract_anim_nat = final_distract.concat(object_class);
        } else {
            if ((object_category === "inanim_natural")) {
                for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_inanim_nat.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    obj_n = _pj_a[_pj_c];
                    if ((distract_inanim_nat[obj_n] !== object_class)) {
                        final_distract = final_distract.concat(distract_inanim_nat[obj_n]);
                        im_n = (im_n + 1);
                        if ((im_n === 2)) {
                            break;
                        }
                    }
                }
                distract_inanim_nat = final_distract.concat(object_class);
            } else {
                if ((object_category === "inanim_artificial")) {
                    for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_inanim_art.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        obj_n = _pj_a[_pj_c];
                        if ((distract_inanim_art[obj_n] !== object_class)) {
                            final_distract = final_distract.concat(distract_inanim_art[obj_n]);
                            im_n = (im_n + 1);
                            if ((im_n === 2)) {
                                break;
                            }
                        }
                    }
                    distract_inanim_art = final_distract.concat(object_class);
                }
            }
        }


        prompts = []
        distract_anim_nat = distract_anim_nat.slice(0, 3)
        distract_inanim_nat = distract_inanim_nat.slice(0, 3)
        distract_inanim_art = distract_inanim_art.slice(0,3)

        console.log(distract_anim_nat);
        console.log(distract_inanim_nat);
        console.log(distract_inanim_art);

        prompts = prompts.concat(distract_anim_nat)
        prompts = prompts.concat(distract_inanim_nat)
        prompts = prompts.concat(distract_inanim_art)
        img_file = `Stim/line_drawing/${object_class}/${object_class}(${int_rand}).png`;
        console.log(img_file);
        util.shuffle(prompts);
        console.log(prompts);
        prompt1 = prompts[0];
        prompt2 = prompts[1];
        prompt3 = prompts[2];
        prompt4 = prompts[3];
        prompt5 = prompts[4];
        prompt6 = prompts[5];
        prompt7 = prompts[6];
        prompt8 = prompts[7];
        prompt9 = prompts[8];
      Begin Routine:
        int_rand = randint(1,10) # random number is generated to be used to pick image number from image class folders

        distract_anim_nat = anim_natural
        shuffle(distract_anim_nat)

        distract_inanim_nat = inanim_natural
        shuffle(distract_inanim_nat)

        distract_inanim_art = inanim_artificial
        shuffle(distract_inanim_art)

        final_distract = []
        im_n = 0

        if object_category == 'anim_natural':
            for obj_n in range(0,len(distract_anim_nat)):
                if distract_anim_nat[obj_n] != object_class:
                    print(distract_anim_nat[obj_n])
                    final_distract = final_distract + [distract_anim_nat[obj_n]]
                    im_n = im_n + 1

                    print(im_n)

                    if im_n ==2:
                        break

            distract_anim_nat = final_distract +  [object_class]
        elif object_category =='inanim_natural':
            for obj_n in range(0,len(distract_inanim_nat)):
                if distract_inanim_nat[obj_n] != object_class:
                    final_distract = final_distract + [distract_inanim_nat[obj_n]]
                    im_n = im_n + 1

                    if im_n ==2:
                        break

            distract_inanim_nat = final_distract +  [object_class]

        elif object_category == 'inanim_artificial':
            for obj_n in range(0,len(distract_inanim_art)):
                if distract_inanim_art[obj_n] != object_class:
                    final_distract = final_distract + [distract_inanim_art[obj_n]]
                    im_n = im_n + 1

                    if im_n ==2:
                        break

            distract_inanim_art = final_distract +  [object_class]


        print(distract_anim_nat)
        print(distract_inanim_nat)
        print(distract_inanim_art)
        prompts = distract_anim_nat[0:3] + distract_inanim_nat[0:3] + distract_inanim_art[0:3]

        #Image file path is established for each trial
        img_file = f'Stim/line_drawing/{object_class}/{object_class}({int_rand}).png'
        print(img_file)
        shuffle(prompts)
        print(prompts)

        #Assign prompts to all nine prompts
        prompt1 = prompts[0]
        prompt2 = prompts[1]
        prompt3 = prompts[2]
        prompt4 = prompts[3]
        prompt5 = prompts[4]
        prompt6 = prompts[5]
        prompt7 = prompts[6]
        prompt8 = prompts[7]
        prompt9 = prompts[8]
    CodeComponent code_correct_ld
      Code Type = Auto->JS
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      Begin Routine:
        #Go through list of prompts and determine which prompt is correct
        corr_label = object_class
        if prompt1 == corr_label:
            corr_response = "1"

        if prompt2 == corr_label:
            corr_response = "2"

        if prompt3 == corr_label:
            corr_response = "3"

        if prompt4 == corr_label:
            corr_response = "4"

        if prompt5 == corr_label:
            corr_response = "5"

        if prompt6 == corr_label:
            corr_response = "6"

        if prompt7 == corr_label:
            corr_response = "7"

        if prompt8 == corr_label:
            corr_response = "8"

        if prompt9 == corr_label:
            corr_response = "9"

        #Adds correct response to data sheet
        thisExp.addData('corr_ans', corr_response)
        print(corr_response)
    CodeComponent prompts_data_sheet_ld
      Code Type = Auto->JS
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      Begin Routine:
        #Add additional column to data sheet for prompts
        thisExp.addData('prompt_1', prompts[0])
        thisExp.addData('prompt_2', prompts[1])
        thisExp.addData('prompt_3', prompts[2])
        thisExp.addData('prompt_4', prompts[3])
        thisExp.addData('prompt_5', prompts[4])
        thisExp.addData('prompt_6', prompts[5])
        thisExp.addData('prompt_7', prompts[6])
        thisExp.addData('prompt_8', prompts[7])
        thisExp.addData('prompt_9', prompts[8])
  Routine fix_scrambled
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    TextComponent cross_scramble
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
      text [set every repeat] = +
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    CodeComponent code_js_scramble
      Code Type = JS
      Before JS Experiment:
        var anim_natural
        var inanim_natural
        var inanim_artificial
        var im_classes
        var corr_response
        var img_file
        var number_to_label
        var response_animacy
        var corr_animacy
      Begin JS Routine:
        if (!run_scrambled) {
          continueRoutine = false;
        }
    CodeComponent code_prompt_scramble
      Code Type = Both
      Before Experiment:
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      Before JS Experiment:
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      Begin JS Routine:
        int_rand = util.randint(1, 10);
        distract_anim_nat = anim_natural;
        util.shuffle(distract_anim_nat);
        distract_inanim_nat = inanim_natural;
        util.shuffle(distract_inanim_nat);
        distract_inanim_art = inanim_artificial;
        util.shuffle(distract_inanim_art);

        final_distract = [];
        im_n = 0;
        if ((object_category === "anim_natural")) {
            for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_anim_nat.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                obj_n = _pj_a[_pj_c];
                if ((distract_anim_nat[obj_n] !== object_class)) {
                    console.log(distract_anim_nat[obj_n]);
                    final_distract = final_distract.concat(distract_anim_nat[obj_n]);
                    im_n = (im_n + 1);
                    console.log(im_n);
                    if ((im_n === 2)) {
                        break;
                    }
                }
            }
            distract_anim_nat = final_distract.concat(object_class);
        } else {
            if ((object_category === "inanim_natural")) {
                for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_inanim_nat.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    obj_n = _pj_a[_pj_c];
                    if ((distract_inanim_nat[obj_n] !== object_class)) {
                        final_distract = final_distract.concat(distract_inanim_nat[obj_n]);
                        im_n = (im_n + 1);
                        if ((im_n === 2)) {
                            break;
                        }
                    }
                }
                distract_inanim_nat = final_distract.concat(object_class);
            } else {
                if ((object_category === "inanim_artificial")) {
                    for (var obj_n, _pj_c = 0, _pj_a = util.range(0, distract_inanim_art.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        obj_n = _pj_a[_pj_c];
                        if ((distract_inanim_art[obj_n] !== object_class)) {
                            final_distract = final_distract.concat(distract_inanim_art[obj_n]);
                            im_n = (im_n + 1);
                            if ((im_n === 2)) {
                                break;
                            }
                        }
                    }
                    distract_inanim_art = final_distract.concat(object_class);
                }
            }
        }


        prompts = []
        distract_anim_nat = distract_anim_nat.slice(0, 3)
        distract_inanim_nat = distract_inanim_nat.slice(0, 3)
        distract_inanim_art = distract_inanim_art.slice(0,3)

        console.log(distract_anim_nat);
        console.log(distract_inanim_nat);
        console.log(distract_inanim_art);

        prompts = prompts.concat(distract_anim_nat)
        prompts = prompts.concat(distract_inanim_nat)
        prompts = prompts.concat(distract_inanim_art)
        img_file = `Stim/scrambled/${object_class}/${object_class}(${int_rand}).png`;
        console.log(img_file);
        util.shuffle(prompts);
        console.log(prompts);
        prompt1 = prompts[0];
        prompt2 = prompts[1];
        prompt3 = prompts[2];
        prompt4 = prompts[3];
        prompt5 = prompts[4];
        prompt6 = prompts[5];
        prompt7 = prompts[6];
        prompt8 = prompts[7];
        prompt9 = prompts[8];
      Begin Routine:
        int_rand = randint(1,10) # random number is generated to be used to pick image number from image class folders

        distract_anim_nat = anim_natural
        shuffle(distract_anim_nat)

        distract_inanim_nat = inanim_natural
        shuffle(distract_inanim_nat)

        distract_inanim_art = inanim_artificial
        shuffle(distract_inanim_art)

        final_distract = []
        im_n = 0

        if object_category == 'anim_natural':
            for obj_n in range(0,len(distract_anim_nat)):
                if distract_anim_nat[obj_n] != object_class:
                    print(distract_anim_nat[obj_n])
                    final_distract = final_distract + [distract_anim_nat[obj_n]]
                    im_n = im_n + 1

                    print(im_n)

                    if im_n ==2:
                        break

            distract_anim_nat = final_distract +  [object_class]
        elif object_category =='inanim_natural':
            for obj_n in range(0,len(distract_inanim_nat)):
                if distract_inanim_nat[obj_n] != object_class:
                    final_distract = final_distract + [distract_inanim_nat[obj_n]]
                    im_n = im_n + 1

                    if im_n ==2:
                        break

            distract_inanim_nat = final_distract +  [object_class]

        elif object_category == 'inanim_artificial':
            for obj_n in range(0,len(distract_inanim_art)):
                if distract_inanim_art[obj_n] != object_class:
                    final_distract = final_distract + [distract_inanim_art[obj_n]]
                    im_n = im_n + 1

                    if im_n ==2:
                        break

            distract_inanim_art = final_distract +  [object_class]


        print(distract_anim_nat)
        print(distract_inanim_nat)
        print(distract_inanim_art)
        prompts = distract_anim_nat[0:3] + distract_inanim_nat[0:3] + distract_inanim_art[0:3]

        #Image file path is established for each trial
        img_file = f'Stim/scrambled/{object_class}/{object_class}({int_rand}).png'
        print(img_file)
        shuffle(prompts)
        print(prompts)

        #Assign prompts to all nine prompts
        prompt1 = prompts[0]
        prompt2 = prompts[1]
        prompt3 = prompts[2]
        prompt4 = prompts[3]
        prompt5 = prompts[4]
        prompt6 = prompts[5]
        prompt7 = prompts[6]
        prompt8 = prompts[7]
        prompt9 = prompts[8]
    CodeComponent code_correct_scramble
      Code Type = Auto->JS
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      Begin Routine:
        #Go through list of prompts and determine which prompt is correct
        corr_label = object_class
        if prompt1 == corr_label:
            corr_response = "1"

        if prompt2 == corr_label:
            corr_response = "2"

        if prompt3 == corr_label:
            corr_response = "3"

        if prompt4 == corr_label:
            corr_response = "4"

        if prompt5 == corr_label:
            corr_response = "5"

        if prompt6 == corr_label:
            corr_response = "6"

        if prompt7 == corr_label:
            corr_response = "7"

        if prompt8 == corr_label:
            corr_response = "8"

        if prompt9 == corr_label:
            corr_response = "9"

        #Adds correct response to data sheet
        thisExp.addData('corr_ans', corr_response)
        print(corr_response)
    CodeComponent prompts_data_sheet_scramble
      Code Type = Auto->JS
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      Begin Routine:
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  Routine block_randomizer
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    CodeComponent block_randomizer
      Code Type = JS
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      Before JS Experiment:
        var run_natural
        var run_linedrawing
        var run_scrambled
      Begin JS Routine:
        run_natural = (block_name === 'natural');
        run_linedrawing = (block_name === 'line_drawing');
        run_scrambled = (block_name === 'scrambled');
  Routine break_2
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        Please take a short break before continuing on to the next experimental block.
        [Press Space Bar to Continue]
  Routine loading_instructions
    RoutineSettingsComponent loading_instructions
      saveStartStop = False
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    TextComponent loading_instruction
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Getting everything set up for you, instructions will appear in a second...
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  Routine img_set_loader
    RoutineSettingsComponent img_set_loader
      disabled = True
      saveStartStop = False
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    TextComponent loading_img_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Loading images, please wait.....
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    CodeComponent img_condition_looper
      Code Type = JS
      Begin JS Routine:
        const object_classes = ['airplane', 'apple', 'avocado', 'bear', 'binoculars', 'bread', 'butterfly', 'car', 'cat', 'corn', 'cow', 'dog', 'house', 'lawnmower', 'mushroom', 'pineapple', 'snail', 'train'];
        const file_list = [];

        object_classes.forEach(object => {
          for (let i = 1; i <= 10; i++) {
              let filename;


              filename = `stim/${block_condition}/${object}/${object}(${i}).png`;
              //console.log(filename)
              file_list.push(filename);
              }
        });
        console.log(file_list);
        psychoJS.serverManager.prepareResources(file_list);
        console.log("Resource Loaded");

        //Scheduler.Event.NEXT;
Flow
  Routine loading_instructions
  Routine intro_practice
  Routine intro_practice_2
  LoopInitiator prac_loop loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = practice_object_classes.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('object_class', 'hand'), ('object_category', 'anim_natural')]),
      OrderedDict([('object_class', 'duck'), ('object_category', 'anim_natural')]),
      OrderedDict([('object_class', 'dog'), ('object_category', 'anim_natural')]),
      OrderedDict([('object_class', 'flower'), ('object_category', 'inanim_natural')]),
      OrderedDict([('object_class', 'tree'), ('object_category', 'inanim_natural')]),
      OrderedDict([('object_class', 'leaf'), ('object_category', 'inanim_natural')]),
      OrderedDict([('object_class', 'bicycle'), ('object_category', 'inanim_artificial')]),
      OrderedDict([('object_class', 'chair'), ('object_category', 'inanim_artificial')]),
      OrderedDict([('object_class', 'truck'), ('object_category', 'inanim_artificial')])]
    Routine prac_fix
    Routine prac_stim
    Routine prac_mask
    Routine prac_prompt
    Routine prac_feedback
  LoopTerminator prac_loop
  LoopInitiator randomize_blocks loopType="TrialHandler"
    conditionsFile = block_randomizer.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': 'natural'},
      {'condition': 'line_drawing'},
      {'condition': 'scrambled'}]
    Routine img_set_loader
    Routine instructions_test
    Routine intro_experiment
    LoopInitiator test_loop loopType="TrialHandler"
      conditionsFile = object_classes.csv
      loopType = random
      nReps = 4
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      conditions:
        [OrderedDict([('object_class', 'bear'), ('object_category', 'anim_natural')]),
        OrderedDict([('object_class', 'butterfly'), ('object_category', 'anim_natural')]),
        OrderedDict([('object_class', 'cat'), ('object_category', 'anim_natural')]),
        OrderedDict([('object_class', 'cow'), ('object_category', 'anim_natural')]),
        OrderedDict([('object_class', 'dog'), ('object_category', 'anim_natural')]),
        OrderedDict([('object_class', 'snail'), ('object_category', 'anim_natural')]),
        OrderedDict([('object_class', 'bread'), ('object_category', 'inanim_natural')]),
        OrderedDict([('object_class', 'mushroom'), ('object_category', 'inanim_natural')]),
        OrderedDict([('object_class', 'pineapple'), ('object_category', 'inanim_natural')]),
        OrderedDict([('object_class', 'apple'), ('object_category', 'inanim_natural')]),
        OrderedDict([('object_class', 'corn'), ('object_category', 'inanim_natural')]),
        OrderedDict([('object_class', 'avocado'), ('object_category', 'inanim_natural')]),
        OrderedDict([('object_class', 'airplane'), ('object_category', 'inanim_artificial')]),
        OrderedDict([('object_class', 'binoculars'), ('object_category', 'inanim_artificial')]),
        OrderedDict([('object_class', 'car'), ('object_category', 'inanim_artificial')]),
        OrderedDict([('object_class', 'house'), ('object_category', 'inanim_artificial')]),
        OrderedDict([('object_class', 'lawnmower'), ('object_category', 'inanim_artificial')]),
        OrderedDict([('object_class', 'train'), ('object_category', 'inanim_artificial')])]
      Routine fix
      Routine stim
      Routine mask
      Routine prompt
      Routine correct
    LoopTerminator test_loop
  LoopTerminator randomize_blocks
